#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3		// Use modern global access method and strict wave access.
#include "LJZ_A2K1D_Core"

// LJZ_A2K1D_UIPlot.ipf
// UI and plotting layer for A2K1D: entry/menu/panel, control callbacks, color-table browser,
// stack/peak/delta-k/heatmap plots, display color tables, and graph styling helpers.
// Non-plotting analysis and conversion logic belongs in LJZ_A2K1D_Core.ipf.

Proc A2K1D_LJZ()
    a2k1d_init_defaults_if_needed()
    
    // 启动时构建一次颜色列表
    a2k1d_rebuild_ct_list()

    DoWindow/F A2K1D_LJZ_P
    if (V_flag == 0)
        A2K1D_LJZ_P()
    endif

    a2k1d_rebuild_lb()
End

Menu "ARPES_LJZ"
    "Angle->k (Value Transform)", A2K1D_LJZ()
End

//============================================================
// Panel/listbox controls
//============================================================
Function a2k1d_sv_df_proc(ctrlName, varNum, varStr, varName) : SetVariableControl
    String ctrlName, varStr, varName
    Variable varNum
    SVAR a2k1d_baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    String s = a2k1d_df_with_colon(a2k1d_baseDF)
    if (!a2k1d_df_exists(s))
        s = "root:"
    endif
    a2k1d_baseDF = s
    a2k1d_rebuild_lb()
    return 0
End

Function a2k1d_rebuild_lb()
    a2k1d_ensure_folder()

    String df0 = GetDataFolder(1)
    SetDataFolder root:ARPES_LJZ:A2K1D

    SVAR a2k1d_baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    SVAR a2k1d_wavePath = root:ARPES_LJZ:A2K1D:a2k1d_wavePath

    Wave/T   LB_Items = root:ARPES_LJZ:A2K1D:LB_Items
    Wave/U/B LB_Sel   = root:ARPES_LJZ:A2K1D:LB_Sel

    Redimension/N=0 LB_Items, LB_Sel
    a2k1d_wavePath = ""

    String base = a2k1d_df_with_colon(a2k1d_baseDF)
    if (!a2k1d_df_exists(base))
        base = "root:"
    endif
    a2k1d_baseDF = base

    // 收集（理论上已较干净）
    String layers = a2k1d_collect_layers(base, a2k1d_recursive)
    String peaks  = a2k1d_collect_peak_sigma(base, a2k1d_recursive)

    // ✅ 最终硬过滤：任何 *_k 或 *_k_spec 都不进列表（避免误操作）
    String listStr = ""
    String rawList = layers + peaks

    Variable i, n
    n = ItemsInList(rawList, ";")
    for (i=0; i<n; i+=1)
        String wp = StringFromList(i, rawList, ";")
        if (strlen(wp) == 0)
            continue
        endif

        String wn = a2k1d_tail_wavename(wp)

        // hard drop outputs
        if (a2k1d_is_result_wave_name(wn))
            continue
        endif

        // allow only: raw layers OR peak/sigmap
        if (a2k1d_is_layer_int_name(wn) || a2k1d_is_peak_sigma_name(wn))
            listStr += wp + ";"
        endif
    endfor

    n = ItemsInList(listStr, ";")
    if (n > 0)
        Redimension/N=(n) LB_Items, LB_Sel
        for (i=0; i<n; i+=1)
            String fullPath = StringFromList(i, listStr, ";")

            if (!a2k1d_recursive)
                LB_Items[i] = a2k1d_tail_wavename(fullPath)
            else
                LB_Items[i] = fullPath
            endif

            LB_Sel[i] = 0
        endfor
    endif

    SetDataFolder df0

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        ControlUpdate/W=A2K1D_LJZ_P a2k1d_lb
        TitleBox a2k1d_status, win=A2K1D_LJZ_P, title="Selected: (none)"
        TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: idle"
    endif

    return 0
End


//============================================================
// ListBox proc
//============================================================
Function a2k1d_lb_proc(ctrlName, row, col, eventCode) : ListBoxControl
    String ctrlName
    Variable row, col, eventCode

    if (eventCode != 4)
        return 0
    endif

    Wave/U/B LB_Sel = root:ARPES_LJZ:A2K1D:LB_Sel
    Wave/T   LB_Items = root:ARPES_LJZ:A2K1D:LB_Items
    SVAR     a2k1d_wavePath = root:ARPES_LJZ:A2K1D:a2k1d_wavePath
    SVAR     a2k1d_baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR     a2k1d_recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive

    if (row < 0 || row >= DimSize(LB_Items, 0))
        return 0
    endif

    LB_Sel = 0
    LB_Sel[row] = 1

    String item = LB_Items[row]
    if (strlen(item) == 0)
        a2k1d_wavePath = ""
    else
        if (a2k1d_recursive)
            a2k1d_wavePath = item
        else
            String base = a2k1d_df_with_colon(a2k1d_baseDF)
            a2k1d_baseDF = base
            a2k1d_wavePath = base + item
        endif
    endif

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_status, win=A2K1D_LJZ_P, title="Selected: " + a2k1d_wavePath
    endif

    return 0
End

//============================================================
// Buttons
//============================================================
Function a2k1d_btn_scan(ctrlName) : ButtonControl
    String ctrlName
    a2k1d_rebuild_lb()
    return 0
End

Function a2k1d_btn_abort(ctrlName) : ButtonControl
    String ctrlName
    NVAR a2k1d_abortFlag = root:ARPES_LJZ:A2K1D:a2k1d_abortFlag
    a2k1d_abortFlag = 1
    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: abort requested"
    endif
    return 0
End


//============================================================
// Safe cleanup of A2K1D generated waves
//============================================================
Function a2k1d_btn_cleanup_preview(ctrlName) : ButtonControl
    String ctrlName

    a2k1d_init_defaults_if_needed()

    SVAR baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive

    String base = a2k1d_df_with_colon(baseDF)
    if (!DataFolderExists(base))
        DoAlert 0, "Cleanup preview: Base DF not found: " + base
        return 0
    endif

    Variable n = a2k1d_preview_cleanup_candidates(base, recursive)
    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Status: cleanup preview | candidates=" + num2str(n))
    endif
    return 0
End

Function a2k1d_btn_cleanup_proc(ctrlName) : ButtonControl
    String ctrlName

    a2k1d_init_defaults_if_needed()

    SVAR baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    SVAR/Z baseName = root:ARPES_LJZ:A2K1D:a2k1d_baseName

    String base = a2k1d_df_with_colon(baseDF)
    if (!DataFolderExists(base))
        DoAlert 0, "Cleanup: Base DF not found: " + base
        return 0
    endif

    String candidates = ""
    if (recursive)
        candidates = a2k1d_cleanup_generated_recursive(base, 1)
    else
        candidates = a2k1d_cleanup_generated_in_df(base, 1)
    endif

    if (SVAR_Exists(baseName) && strlen(baseName) > 0)
        candidates += a2k1d_cleanup_output_temp_for_group(baseName, 1)
    else
        Print "A2K1D Cleanup: baseName is empty; skip OUTPUT:A2K1D group cleanup."
    endif

    Variable n = ItemsInList(candidates, ";")
    if (n <= 0)
        DoAlert 0, "Cleanup: no generated A2K1D waves found under " + base
        return 0
    endif

    Print "A2K1D Cleanup candidates:"
    Variable i
    for (i = 0; i < n; i += 1)
        Print "  " + StringFromList(i, candidates, ";")
    endfor

    String msg
    msg = "Delete " + num2str(n) + " generated A2K1D waves?\r\r"
    msg += "Base DF:\r" + base + "\r\r"
    msg += "Source waves such as layer_show_<i>, Peak1K, Sigmap1K will be kept.\r"
    if (SVAR_Exists(baseName) && strlen(baseName) > 0)
        msg += "Only plotting waves with prefix '" + baseName + "_' under root:ARPES_LJZ:OUTPUT:A2K1D: will be removed.\r"
    else
        msg += "OUTPUT:A2K1D plotting waves will not be touched because BaseName is empty.\r"
    endif
    msg += "\rProceed?"

    DoAlert 1, msg
    if (V_flag != 1)
        Print "A2K1D Cleanup cancelled."
        return 0
    endif

    if (recursive)
        a2k1d_cleanup_generated_recursive(base, 0)
    else
        a2k1d_cleanup_generated_in_df(base, 0)
    endif

    if (SVAR_Exists(baseName) && strlen(baseName) > 0)
        a2k1d_cleanup_output_temp_for_group(baseName, 0)
    endif

    a2k1d_rebuild_lb()

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Status: cleanup done | deleted=" + num2str(n))
    endif

    Print "A2K1D Cleanup done. Deleted generated waves=", n
    return 0
End


Function a2k1d_btn_table_peak_k(ctrlName) : ButtonControl
    String ctrlName

    a2k1d_init_defaults_if_needed()

    SVAR a2k1d_baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    String fdf = a2k1d_df_with_colon(a2k1d_baseDF)

    if (DataFolderExists(fdf) && (WaveExists($(fdf + "Long_PeakAngle"))))
        Print "A2K1D Table Peak->K: using baseDF " + fdf
        LJZ_A2K1D_TransformLongTable(fdf)
        return 0
    endif

    String candidate = RemoveEnding(fdf, ":") + ":FIT_HP:"
    if (DataFolderExists(candidate) && (WaveExists($(candidate + "Long_PeakAngle"))))
        Print "A2K1D Table Peak->K: baseDF had no Long_PeakAngle, falling back to " + candidate
        LJZ_A2K1D_TransformLongTable(candidate)
        return 0
    endif

    DoAlert 0, "Table Peak->K: Long_PeakAngle not found in checked folders:\r1) " + fdf + "\r2) " + candidate + "\rPlease point Base DF to FIT_HP or run MDCWB Export first."
    return 0
End

//============================================================
// Helper: forbid using result waves as input
//============================================================
Function a2k1d_btn_spec_run(ctrlName) : ButtonControl
    String ctrlName

    // 1. Get Selected Wave
    SVAR a2k1d_wavePath = root:ARPES_LJZ:A2K1D:a2k1d_wavePath
    if (strlen(a2k1d_wavePath) == 0)
        Abort "A2K1D: No wave selected."
    endif

    Wave/Z src = $a2k1d_wavePath
    if (!WaveExists(src))
        Abort "A2K1D: selected wave not found."
    endif

    // ✅ 核心：禁止把 *_k_spec 或 *_k 当输入
    String wn = NameOfWave(src)
    if (a2k1d_is_result_wave_name(wn))
        Abort "A2K1D Spectra: Please select RAW 'layer_show_i' (input). '*_k_spec'/'*_k' are outputs and must NOT be re-processed."
    endif

    // ✅ 强约束：Spectra 插值只接受 layer_show_纯数字
    if (!a2k1d_is_layer_int_name(wn))
        Abort "A2K1D Spectra: Input must be 'layer_show_<integer>' (raw)."
    endif

    // 2. Get Parameters
    a2k1d_sync_unified_from_legacy_if_missing()
    NVAR ThetaAngle = root:ARPES_LJZ:A2K1D:ThetaAngle
    NVAR hv = root:ARPES_LJZ:A2K1D:hv
    NVAR WorkFunc = root:ARPES_LJZ:A2K1D:WorkFunc
    NVAR EnergyRel = root:ARPES_LJZ:A2K1D:EnergyRel
    NVAR MDCKf = root:ARPES_LJZ:A2K1D:MDCKf
    NVAR LatticeA = root:ARPES_LJZ:A2K1D:LatticeA
    SVAR a2k1d_baseName   = root:ARPES_LJZ:A2K1D:a2k1d_baseName

    // baseName: 默认用输入名（layer_show_i）
    String useBaseName = a2k1d_baseName
    if (strlen(useBaseName) == 0)
        useBaseName = wn
    endif

    // 3. Set Output Folder: SAME DF as source wave
    String df0 = GetDataFolder(1)
    SetDataFolder GetWavesDataFolder(src, 1)

    // 4. Update Status UI
    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: Interpolating..."
    endif

    // 5. Run (✅ 输出会 Duplicate/O 覆盖已有 *_k_spec)
    Variable rc
    rc = LJZ_Spectra_Interp_Run(a2k1d_wavePath, useBaseName, ThetaAngle, hv, WorkFunc, EnergyRel, MDCKf, LatticeA)

    SetDataFolder df0

    // 6. Finish UI
    DoWindow A2K1D_LJZ_P
    if (V_flag)
        if (rc == 0)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: Done (Spectra)"
        else
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: Failed"
        endif
    endif

    return 0
End


Function a2k1d_btn_run(ctrlName) : ButtonControl
    String ctrlName

    SVAR a2k1d_wavePath = root:ARPES_LJZ:A2K1D:a2k1d_wavePath
    if (strlen(a2k1d_wavePath) == 0)
        Abort "A2K1D: No wave selected."
    endif

    Wave/Z src = $a2k1d_wavePath
    if (!WaveExists(src))
        Abort "A2K1D: selected wave not found."
    endif

    // gather params
    a2k1d_sync_unified_from_legacy_if_missing()
    NVAR Pixel = root:ARPES_LJZ:A2K1D:Pixel
    a2k1d_sync_unified_from_legacy_if_missing()
    NVAR ThetaAngle = root:ARPES_LJZ:A2K1D:ThetaAngle
    NVAR hv = root:ARPES_LJZ:A2K1D:hv
    NVAR WorkFunc = root:ARPES_LJZ:A2K1D:WorkFunc
    NVAR EnergyRel = root:ARPES_LJZ:A2K1D:EnergyRel
    NVAR MDCKf = root:ARPES_LJZ:A2K1D:MDCKf
    NVAR LatticeA = root:ARPES_LJZ:A2K1D:LatticeA
    NVAR a2k1d_outN       = root:ARPES_LJZ:A2K1D:a2k1d_outN
    SVAR a2k1d_baseName   = root:ARPES_LJZ:A2K1D:a2k1d_baseName

    // reset abort
    NVAR a2k1d_abortFlag = root:ARPES_LJZ:A2K1D:a2k1d_abortFlag
    a2k1d_abortFlag = 0

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: running..."
    endif

    String useBaseName = a2k1d_baseName
    if (strlen(useBaseName) == 0)
        useBaseName = NameOfWave(src)
    endif

	String df0 = GetDataFolder(1)
	SetDataFolder GetWavesDataFolder(src, 1)   // output next to src

    Variable rc
    rc = LJZ_A2K1D_Run(a2k1d_wavePath, useBaseName, Pixel, ThetaAngle, hv, WorkFunc, EnergyRel, MDCKf, LatticeA, a2k1d_outN)

    SetDataFolder df0

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        if (rc == 0)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: done"
        else
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: failed"
        endif
    endif

    if (rc < 0)
        Abort "A2K1D: algorithm failed."
    endif

    return 0
End

Function a2k1d_btn_close(ctrlName) : ButtonControl
    String ctrlName
    DoWindow/K A2K1D_LJZ_P
    return 0
End

Function a2k1d_btn_help(ctrlName) : ButtonControl
    String ctrlName
    String nb = "A2K1D_LJZ_HELP"
    DoWindow/F $nb
    if (V_flag == 0)
        NewNotebook/N=$nb/F=1/V=1 as "Angle->k Value Help"
    endif
    Notebook $nb selection={startOfFile, endOfFile}
    Notebook $nb text=""
    Notebook $nb text="Angle->k (Value Transform)\r"
    Notebook $nb text="===========================\r"
    Notebook $nb text="Input: Wave where Y = Angle, X = Time/Step.\r"
    Notebook $nb text="Output: Wave where Y = Momentum (k), X = unchanged.\r\r"
    Notebook $nb text="Formula:\r  k = 0.5118 * sqrt(hv - WorkFunc + EnergyRel) * sin(rawAngle - ThetaAngle) - MDCKf\r"
    Notebook $nb text="  If LatticeA != 0, k is reported in pi/a units by multiplying 0.5118 by LatticeA/pi.\r\r"
    Notebook $nb text="Angle Calculation:\r"
    Notebook $nb text="  Pixel=0 means raw values are already in degrees; otherwise rawAngle = rawValue * Pixel.\r"
    Notebook $nb text="  EKin = hv - WorkFunc + EnergyRel.\r\r"
    Notebook $nb text="Corrected workflow:\r"
    Notebook $nb text="  MDCTrack dK_toRef is interpreted as dTheta_toRef by A2K1D; Make Corr Peaks/Layers stay in angle domain.\r"
    Notebook $nb text="  thetaCorr = thetaCenter + scaleEff*(thetaRaw - thetaCenter) + dThetaEff, then Corr -> K uses the unified helper.\r\r"
    Notebook $nb text="Note: OutN is ignored in this mode.\r"
    return 0
End

Window A2K1D_LJZ_P() : Panel
	PauseUpdate; Silent 1
	NewPanel /W=(80,45,810,735) as "Angle->k (A2K1D LJZ)"
	ModifyPanel frameStyle=1
	ShowTools/A

	//============================================================
	// Top status
	//============================================================
	TitleBox a2k1d_t0,pos={10,8},size={300,18},title="A2K1D: Angle -> k",frame=0
	TitleBox a2k1d_status,pos={10,28},size={700,18},title="Selected: (none)",frame=0
	TitleBox a2k1d_runstat,pos={10,48},size={700,18},title="Status: idle",frame=0

	//============================================================
	// Base DF row
	//============================================================
	TitleBox a2k1d_tdf,pos={10,76},size={28,18},title="DF",frame=0
	SetVariable a2k1d_sv_df,pos={42,72},size={480,20},bodyWidth=430,proc=a2k1d_sv_df_proc,title=""
	SetVariable a2k1d_sv_df,value=root:ARPES_LJZ:A2K1D:a2k1d_baseDF

	CheckBox a2k1d_ck_rec,pos={532,74},size={80,18},title="Recursive"
	CheckBox a2k1d_ck_rec,variable=root:ARPES_LJZ:A2K1D:a2k1d_recursive

	Button a2k1d_btn_scan,pos={625,70},size={82,24},proc=a2k1d_btn_scan,title="Scan"

	//============================================================
	// Left list
	//============================================================
	ListBox a2k1d_lb,pos={10,102},size={330,410},proc=a2k1d_lb_proc
	ListBox a2k1d_lb,listWave=root:ARPES_LJZ:A2K1D:LB_Items
	ListBox a2k1d_lb,selWave=root:ARPES_LJZ:A2K1D:LB_Sel,mode=1,selRow=0

	//============================================================
	// Right: Physics
	//============================================================
	TitleBox a2k1d_tp,pos={355,102},size={120,18},title="Physics",frame=0

	SetVariable a2k1d_sv_th,pos={355,124},size={170,20},bodyWidth=80,title="Theta"
	SetVariable a2k1d_sv_th,limits={-360,360,0.01},value=root:ARPES_LJZ:A2K1D:ThetaAngle

	SetVariable a2k1d_sv_hv,pos={540,124},size={160,20},bodyWidth=82,title="hv"
	SetVariable a2k1d_sv_hv,limits={0,1e+06,0.01},value=root:ARPES_LJZ:A2K1D:hv

	SetVariable a2k1d_sv_wf,pos={355,148},size={170,20},bodyWidth=80,title="WF"
	SetVariable a2k1d_sv_wf,limits={0,100,0.01},value=root:ARPES_LJZ:A2K1D:WorkFunc

	SetVariable a2k1d_sv_e,pos={540,148},size={160,20},bodyWidth=82,title="Erel"
	SetVariable a2k1d_sv_e,limits={-100000,100000,0.01},value=root:ARPES_LJZ:A2K1D:EnergyRel

	SetVariable a2k1d_sv_ksh,pos={355,172},size={170,20},bodyWidth=80,title="kF"
	SetVariable a2k1d_sv_ksh,limits={-100000,100000,0.0001},value=root:ARPES_LJZ:A2K1D:MDCKf

	SetVariable a2k1d_sv_lc,pos={540,172},size={160,20},bodyWidth=82,title="a"
	SetVariable a2k1d_sv_lc,limits={0,1e+06,0.0001},value=root:ARPES_LJZ:A2K1D:LatticeA

	//============================================================
	// Right: Single wave
	//============================================================
	TitleBox a2k1d_tp_single,pos={355,204},size={120,18},title="Single",frame=0

	SetVariable a2k1d_sv_bn,pos={355,226},size={345,20},bodyWidth=270,title="Name"
	SetVariable a2k1d_sv_bn,value=root:ARPES_LJZ:A2K1D:a2k1d_baseName

	SetVariable a2k1d_sv_deg,pos={355,250},size={170,20},bodyWidth=80,title="Pixel"
	SetVariable a2k1d_sv_deg,limits={-999,999,0.001},value=root:ARPES_LJZ:A2K1D:Pixel

	SetVariable a2k1d_sv_n,pos={540,250},size={160,20},bodyWidth=82,title="OutN"
	SetVariable a2k1d_sv_n,limits={0,1e+07,1},value=root:ARPES_LJZ:A2K1D:a2k1d_outN

	TitleBox a2k1d_tb_pixel_note,pos={355,273},size={345,16},title="Pixel=0: degree scale",frame=0

	Button a2k1d_btn_run,pos={355,294},size={165,24},proc=a2k1d_btn_run,title="Value -> k"
	Button a2k1d_btn_spec,pos={535,294},size={165,24},proc=a2k1d_btn_spec_run,title="Spectra -> k"

	//============================================================
	// Right: Batch
	//============================================================
	TitleBox a2k1d_tp_batch,pos={355,334},size={120,18},title="Batch",frame=0

	Button a2k1d_btn_batch_layer,pos={355,356},size={165,24},proc=a2k1d_btn_batch_layers_interp,title="Layers -> k"
	Button a2k1d_btn_batch_peak,pos={535,356},size={165,24},proc=a2k1d_btn_batch_peaks_valuetrans,title="Peaks -> k"

	Button a2k1d_btn_table_peak_k,pos={355,384},size={345,24},proc=a2k1d_btn_table_peak_k,title="Table Peak -> k"

	//============================================================
	// Right: Correction
	//============================================================
	TitleBox a2k1d_tp_corr,pos={355,420},size={120,18},title="Correction",frame=0

	SetVariable a2k1d_sv_corr_df,pos={355,442},size={345,20},bodyWidth=270,title="CorrDF"
	SetVariable a2k1d_sv_corr_df,value=root:ARPES_LJZ:A2K1D:a2k1d_corrRunDF

	CheckBox a2k1d_ck_angle_corr,pos={355,468},size={88,18},title="Use corr"
	CheckBox a2k1d_ck_angle_corr,variable=root:ARPES_LJZ:A2K1D:a2k1d_useAngleCorr

	CheckBox a2k1d_ck_corr_skip,pos={450,468},size={85,18},title="Skip bad"
	CheckBox a2k1d_ck_corr_skip,variable=root:ARPES_LJZ:A2K1D:a2k1d_corrSkipFlagged

	SetVariable a2k1d_sv_corr_mode,pos={548,466},size={152,20},bodyWidth=58,title="Mode"
	SetVariable a2k1d_sv_corr_mode,limits={0,2,1},value=root:ARPES_LJZ:A2K1D:a2k1d_corrMode

	TitleBox a2k1d_tb_corr_mode,pos={355,490},size={345,16},title="Mode: 0 full, 1 first, 2 mean",frame=0

	Button a2k1d_btn_corr_peaks,pos={355,512},size={165,24},proc=a2k1d_btn_make_corr_peaks,title="Make Peaks"
	Button a2k1d_btn_corr_layers,pos={535,512},size={165,24},proc=a2k1d_btn_make_corr_layers,title="Make Layers"

	Button a2k1d_btn_corr_peaks_k,pos={355,540},size={165,24},proc=a2k1d_btn_corr_peaks_to_k,title="Peaks -> k"
	Button a2k1d_btn_corr_layers_k,pos={535,540},size={165,24},proc=a2k1d_btn_corr_layers_to_k,title="Layers -> k"

	//============================================================
	// Right: Utility
	//============================================================
	TitleBox a2k1d_tp_util,pos={355,578},size={120,18},title="Utility",frame=0

	Button a2k1d_btn_cleanup,pos={355,600},size={165,24},proc=a2k1d_btn_cleanup_proc,title="Clean outputs"
	Button a2k1d_btn_cleanup_preview,pos={535,600},size={165,24},proc=a2k1d_btn_cleanup_preview,title="Preview clean"

	Button a2k1d_btn_abort,pos={355,630},size={345,24},proc=a2k1d_btn_abort,title="Abort"

	Button a2k1d_btn_help,pos={355,660},size={165,24},proc=a2k1d_btn_help,title="Help"
	Button a2k1d_btn_close,pos={535,660},size={165,24},proc=a2k1d_btn_close,title="Close"

	//============================================================
	// Bottom left: Plot
	//============================================================
	TitleBox a2k1d_tp_plot,pos={10,525},size={100,18},title="Plot",frame=0

	Button a2k1d_btn_plot_peaks,pos={10,548},size={105,24},proc=a2k1d_btn_plot_peaks_err,title="Plot Peaks"
	Button a2k1d_btn_plot_delta,pos={125,548},size={105,24},proc=a2k1d_btn_plot_delta_err,title="Plot Dk12"

	SetVariable a2k1d_sv_kvary,pos={240,550},size={100,20},bodyWidth=55,title="kVary"
	SetVariable a2k1d_sv_kvary,limits={-1e+06,1e+06,0.001},value=root:ARPES_LJZ:A2K1D:a2k1d_kvary

	Button a2k1d_btn_plot_layers,pos={10,580},size={330,24},proc=a2k1d_btn_plot_layers_stack,title="Plot stack"

	//============================================================
	// Bottom left: Color / heatmap
	//============================================================
	CheckBox a2k1d_ck_useCT,pos={10,615},size={65,18},title="Grad"
	CheckBox a2k1d_ck_useCT,variable=root:ARPES_LJZ:A2K1D:a2k1d_useCT

	CheckBox a2k1d_ck_invCT,pos={82,615},size={65,18},title="Invert"
	CheckBox a2k1d_ck_invCT,variable=root:ARPES_LJZ:A2K1D:a2k1d_ctInvert

	TitleBox a2k1d_tb_ct_current,pos={155,615},size={110,18},title="CT: NeonClash",frame=0
	Button a2k1d_btn_browse_ct,pos={300,611},size={40,22},proc=a2k1d_btn_open_ct_browser,title="..."

	Button a2k1d_btn_plot_heat,pos={10,642},size={330,26},proc=a2k1d_btn_plot_layers_heatmap,title="Plot heatmap"

	//============================================================
	// Bottom middle: heatmap axis params
	//============================================================
	SetVariable a2k1d_sv_hmY0,pos={10,672},size={100,20},bodyWidth=55,title="y0"
	SetVariable a2k1d_sv_hmY0,limits={-1e+09,1e+09,0.01},value=root:ARPES_LJZ:A2K1D:a2k1d_hmY0

	SetVariable a2k1d_sv_hmDY,pos={120,672},size={100,20},bodyWidth=55,title="dY"
	SetVariable a2k1d_sv_hmDY,limits={-1e+09,1e+09,0.01},value=root:ARPES_LJZ:A2K1D:a2k1d_hmDY

	PopupMenu a2k1d_pm_hmUnit,pos={230,671},size={105,20},proc=a2k1d_pm_hm_unit_proc,title="Y"
	PopupMenu a2k1d_pm_hmUnit,mode=3,popvalue="Fluence",value=#"\"Delay;Temp;Fluence;Index\""

	SetVariable a2k1d_sv_hmMul,pos={240,525},size={100,20},bodyWidth=55,title="mul"
	SetVariable a2k1d_sv_hmMul,limits={-1e+09,1e+09,0.0001},value=root:ARPES_LJZ:A2K1D:a2k1d_hmYMul

EndMacro




//============================================================
// Core (public API) REWRITTEN
// Y-Value Transformation: Angle -> k
//============================================================
Function a2k1d_btn_batch_layers_interp(ctrlName) : ButtonControl
    String ctrlName

    a2k1d_sync_unified_from_legacy_if_missing()
    SVAR a2k1d_baseDF      = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive   = root:ARPES_LJZ:A2K1D:a2k1d_recursive

    NVAR ThetaAngle = root:ARPES_LJZ:A2K1D:ThetaAngle
    NVAR hv = root:ARPES_LJZ:A2K1D:hv
    NVAR WorkFunc = root:ARPES_LJZ:A2K1D:WorkFunc
    NVAR EnergyRel = root:ARPES_LJZ:A2K1D:EnergyRel
    NVAR MDCKf = root:ARPES_LJZ:A2K1D:MDCKf
    NVAR LatticeA = root:ARPES_LJZ:A2K1D:LatticeA

    NVAR a2k1d_abortFlag   = root:ARPES_LJZ:A2K1D:a2k1d_abortFlag
    NVAR a2k1d_showGraph   = root:ARPES_LJZ:A2K1D:a2k1d_showGraph

    a2k1d_abortFlag = 0

    // ✅ 只收集原始 layer_show_<int>，不会包含 *_k_spec
    String list = a2k1d_collect_layers(a2k1d_baseDF, a2k1d_recursive)
    Variable n = ItemsInList(list, ";")
    if (n <= 0)
        DoAlert 0, "Batch layer interp: no raw layer_show_<int> waves under " + a2k1d_baseDF
        return 0
    endif

    // batch: silent
    Variable oldShow = a2k1d_showGraph
    a2k1d_showGraph = 0

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: batch layer interp..."
    endif

    Variable i, ok=0, fail=0
    for (i=0; i<n; i+=1)
        if (a2k1d_abortFlag)
            break
        endif

        String wp = StringFromList(i, list, ";")
        Wave/Z w = $wp
        if (!WaveExists(w))
            fail += 1
            continue
        endif

        // ✅ 再保险：如果有人手动改名成 *_k_spec，也直接拒绝
        String wn = NameOfWave(w)
        if (a2k1d_is_result_wave_name(wn))
            fail += 1
            continue
        endif
        if (!a2k1d_is_layer_int_name(wn))
            fail += 1
            continue
        endif

        // 输出 baseName = 原始名（或你也可以用 a2k1d_baseName，但这里按 raw 名更稳）
        Variable rc = LJZ_Spectra_Interp_Run(wp, wn, ThetaAngle, hv, WorkFunc, EnergyRel, MDCKf, LatticeA)
        if (rc == 0)
            ok += 1
        else
            fail += 1
        endif

        DoWindow A2K1D_LJZ_P
        if (V_flag)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Batch layer: " + num2str(i+1) + "/" + num2str(n))
        endif
    endfor

    a2k1d_showGraph = oldShow

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        if (a2k1d_abortFlag)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Status: aborted | ok=" + num2str(ok) + ", fail=" + num2str(fail))
        else
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Status: done | ok=" + num2str(ok) + ", fail=" + num2str(fail))
        endif
    endif

    Printf "Batch layer interp finished: ok=%d fail=%d total=%d\r", ok, fail, n
    return 0
End




Function a2k1d_btn_batch_peaks_valuetrans(ctrlName) : ButtonControl
    String ctrlName

    SVAR a2k1d_baseDF      = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive   = root:ARPES_LJZ:A2K1D:a2k1d_recursive

    a2k1d_sync_unified_from_legacy_if_missing()
    NVAR Pixel = root:ARPES_LJZ:A2K1D:Pixel
    NVAR ThetaAngle = root:ARPES_LJZ:A2K1D:ThetaAngle
    NVAR hv = root:ARPES_LJZ:A2K1D:hv
    NVAR WorkFunc = root:ARPES_LJZ:A2K1D:WorkFunc
    NVAR EnergyRel = root:ARPES_LJZ:A2K1D:EnergyRel
    NVAR MDCKf = root:ARPES_LJZ:A2K1D:MDCKf
    NVAR LatticeA = root:ARPES_LJZ:A2K1D:LatticeA
    NVAR a2k1d_outN        = root:ARPES_LJZ:A2K1D:a2k1d_outN

    NVAR a2k1d_abortFlag   = root:ARPES_LJZ:A2K1D:a2k1d_abortFlag
    NVAR a2k1d_showGraph   = root:ARPES_LJZ:A2K1D:a2k1d_showGraph

    a2k1d_abortFlag = 0

    String list = a2k1d_collect_peak_sigma(a2k1d_baseDF, a2k1d_recursive)
    Variable n = ItemsInList(list, ";")
    if (n <= 0)
        DoAlert 0, "Batch peak/sigma: no peak1k/2k/3k or sigmap1k/2k/3k found under " + a2k1d_baseDF
        return 0
    endif

    // batch: silent (no windows)
    Variable oldShow = a2k1d_showGraph
    a2k1d_showGraph = 0

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: batch peak -> k, sigma -> k, delta -> k..."
    endif

    // -------- Pass 0: collect unique folders (outDF list) --------
    String folderList = ""
    Variable i
    for (i=0; i<n; i+=1)
        String wp0 = StringFromList(i, list, ";")
        if (strlen(wp0) == 0)
            continue
        endif

        Wave/Z w0 = $wp0
        if (!WaveExists(w0))
            continue
        endif

        String outDF0 = GetWavesDataFolder(w0, 1)
        if (strlen(outDF0)==0)
            outDF0 = "root:"
        endif

        if (WhichListItem(outDF0, folderList, ";") == -1)
            folderList += outDF0 + ";"
        endif
    endfor

    // -------- Pass 1: ONLY transform peaks (value -> k) --------
    Variable okP=0, failP=0, skipP=0
    for (i=0; i<n; i+=1)
        if (a2k1d_abortFlag)
            break
        endif

        String wp = StringFromList(i, list, ";")
        if (strlen(wp) == 0)
            continue
        endif

        Wave/Z w = $wp
        if (!WaveExists(w))
            failP += 1
            continue
        endif

        String wn = NameOfWave(w)

        // only peaks; sigmas are handled later by propagation
        if (!a2k1d_is_peak_name(wn))
            continue
        endif

        Variable rc = LJZ_A2K1D_Run(wp, wn, Pixel, ThetaAngle, hv, WorkFunc, EnergyRel, MDCKf, LatticeA, a2k1d_outN)
        if (rc == 0)
            okP += 1
        else
            failP += 1
        endif

        DoWindow A2K1D_LJZ_P
        if (V_flag)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Batch peaks: " + num2str(i+1) + "/" + num2str(n))
        endif
    endfor

    // -------- Pass 2: sigma propagation + delta per folder --------
    Variable okS=0, failS=0, skipS=0
    Variable okD=0, failD=0, skipD=0
    Variable okSD=0, failSD=0, skipSD=0

    Variable nf = ItemsInList(folderList, ";")
    for (i=0; i<nf; i+=1)
        if (a2k1d_abortFlag)
            break
        endif

        String fdf = StringFromList(i, folderList, ";")
        if (strlen(fdf) == 0)
            continue
        endif

        // ---- sigma propagation: Sigmap1K -> Sigmap1K_k (case-insensitive tails)
        String p1Raw = a2k1d_find_wave_tail_in_df_ci(fdf, "Peak1K")
        String s1Raw = a2k1d_find_wave_tail_in_df_ci(fdf, "Sigmap1K")
        if (strlen(p1Raw) > 0 && strlen(s1Raw) > 0)
            Wave/Z wS1RawName = $s1Raw
            Variable rc1 = LJZ_A2K1D_Run_Sigma(p1Raw, s1Raw, NameOfWave(wS1RawName), Pixel, ThetaAngle, hv, WorkFunc, EnergyRel, MDCKf, LatticeA)
            if (rc1 == 0)
                okS += 1
            else
                failS += 1
            endif
        else
            skipS += 1
        endif

        // ---- sigma propagation: Sigmap2K -> Sigmap2K_k (case-insensitive tails)
        String p2Raw = a2k1d_find_wave_tail_in_df_ci(fdf, "Peak2K")
        String s2Raw = a2k1d_find_wave_tail_in_df_ci(fdf, "Sigmap2K")
        if (strlen(p2Raw) > 0 && strlen(s2Raw) > 0)
            Wave/Z wS2RawName = $s2Raw
            Variable rc2 = LJZ_A2K1D_Run_Sigma(p2Raw, s2Raw, NameOfWave(wS2RawName), Pixel, ThetaAngle, hv, WorkFunc, EnergyRel, MDCKf, LatticeA)
            if (rc2 == 0)
                okS += 1
            else
                failS += 1
            endif
        else
            skipS += 1
        endif

        // ---- sigma propagation: Sigmap3K -> Sigmap3K_k (case-insensitive tails)
        String p3Raw = a2k1d_find_wave_tail_in_df_ci(fdf, "Peak3K")
        String s3Raw = a2k1d_find_wave_tail_in_df_ci(fdf, "Sigmap3K")
        if (strlen(p3Raw) > 0 && strlen(s3Raw) > 0)
            Wave/Z wS3RawName = $s3Raw
            Variable rc3 = LJZ_A2K1D_Run_Sigma(p3Raw, s3Raw, NameOfWave(wS3RawName), Pixel, ThetaAngle, hv, WorkFunc, EnergyRel, MDCKf, LatticeA)
            if (rc3 == 0)
                okS += 1
            else
                failS += 1
            endif
        else
            skipS += 1
        endif

        // ---- delta k: deltak12_k = abs(Peak1K_k - Peak2K_k)
        String p1K = a2k1d_find_wave_tail_in_df_ci(fdf, "Peak1K_k")
        String p2K = a2k1d_find_wave_tail_in_df_ci(fdf, "Peak2K_k")
        if (strlen(p1K) > 0 && strlen(p2K) > 0)
            Wave/Z wP1K = $p1K
            Wave/Z wP2K = $p2K

            if (WaveExists(wP1K) && WaveExists(wP2K) && WaveDims(wP1K)==1 && WaveDims(wP2K)==1 && DimSize(wP1K,0)==DimSize(wP2K,0))
                Duplicate/O wP1K, $(fdf+"deltak12_k")
                Wave wDeltaK = $(fdf+"deltak12_k")

                wDeltaK = abs(wP1K - wP2K)

                SetScale/P x, DimOffset(wP1K,0), DimDelta(wP1K,0), WaveUnits(wP1K,0), wDeltaK
                SetScale d, 0, 0, WaveUnits(wP1K,-1), wDeltaK

                Note/K wDeltaK
                String noteDelta = ""
                noteDelta += "A2K1D DeltaK (LJZ)\r"
                noteDelta += "wave1=" + p1K + "\r"
                noteDelta += "wave2=" + p2K + "\r"
                noteDelta += "formula=abs(peak1k_k-peak2k_k)\r"
                Note wDeltaK, noteDelta

                okD += 1
            else
                failD += 1
            endif
        else
            skipD += 1
        endif

        // ---- sigma(delta k): sigmadeltak12_k = sqrt(Sigmap1K_k^2 + Sigmap2K_k^2)
        String s1K = a2k1d_find_wave_tail_in_df_ci(fdf, "Sigmap1K_k")
        String s2K = a2k1d_find_wave_tail_in_df_ci(fdf, "Sigmap2K_k")
        if (strlen(s1K) > 0 && strlen(s2K) > 0)
            Wave/Z wS1K = $s1K
            Wave/Z wS2K = $s2K

            if (WaveExists(wS1K) && WaveExists(wS2K) && WaveDims(wS1K)==1 && WaveDims(wS2K)==1 && DimSize(wS1K,0)==DimSize(wS2K,0))
                Duplicate/O wS1K, $(fdf+"sigmadeltak12_k")
                Wave wSigmaDeltaK = $(fdf+"sigmadeltak12_k")

                wSigmaDeltaK = sqrt(wS1K^2 + wS2K^2)

                SetScale/P x, DimOffset(wS1K,0), DimDelta(wS1K,0), WaveUnits(wS1K,0), wSigmaDeltaK
                SetScale d, 0, 0, WaveUnits(wS1K,-1), wSigmaDeltaK

                Note/K wSigmaDeltaK
                String noteSigmaDelta = ""
                noteSigmaDelta += "A2K1D SigmaDeltaK (LJZ)\r"
                noteSigmaDelta += "sigma1=" + s1K + "\r"
                noteSigmaDelta += "sigma2=" + s2K + "\r"
                noteSigmaDelta += "formula=sqrt(sigmap1k_k^2+sigmap2k_k^2)\r"
                Note wSigmaDeltaK, noteSigmaDelta

                okSD += 1
            else
                failSD += 1
            endif
        else
            skipSD += 1
        endif

        DoWindow A2K1D_LJZ_P
        if (V_flag)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Batch sigma/delta: " + num2str(i+1) + "/" + num2str(nf))
        endif
    endfor

    a2k1d_showGraph = oldShow

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        if (a2k1d_abortFlag)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Status: aborted | peaks(ok/skip/fail)=" + num2str(okP)+"/"+num2str(skipP)+"/"+num2str(failP) + " | sigma(ok/skip/fail)=" + num2str(okS)+"/"+num2str(skipS)+"/"+num2str(failS) + " | delta(ok/skip/fail)=" + num2str(okD)+"/"+num2str(skipD)+"/"+num2str(failD) + " | sigmadelta(ok/skip/fail)=" + num2str(okSD)+"/"+num2str(skipSD)+"/"+num2str(failSD))
        else
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title=("Status: done | peaks(ok/skip/fail)=" + num2str(okP)+"/"+num2str(skipP)+"/"+num2str(failP) + " | sigma(ok/skip/fail)=" + num2str(okS)+"/"+num2str(skipS)+"/"+num2str(failS) + " | delta(ok/skip/fail)=" + num2str(okD)+"/"+num2str(skipD)+"/"+num2str(failD) + " | sigmadelta(ok/skip/fail)=" + num2str(okSD)+"/"+num2str(skipSD)+"/"+num2str(failSD))
        endif
    endif

    Printf "Batch peaks->k: ok=%d skip=%d fail=%d | sigma->k: ok=%d skip=%d fail=%d | delta->k: ok=%d skip=%d fail=%d | sigmadelta->k: ok=%d skip=%d fail=%d | folders=%d\r", okP, skipP, failP, okS, skipS, failS, okD, skipD, failD, okSD, skipSD, failSD, nf

    return 0
End


Function a2k1d_btn_plot_layers_stack(ctrlName) : ButtonControl
    String ctrlName

    SVAR a2k1d_baseDF    = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    NVAR a2k1d_kvary     = root:ARPES_LJZ:A2K1D:a2k1d_kvary
    SVAR a2k1d_baseName  = root:ARPES_LJZ:A2K1D:a2k1d_baseName
    NVAR useCorr = root:ARPES_LJZ:A2K1D:a2k1d_useAngleCorr
    NVAR a2k1d_hmUnitMode = root:ARPES_LJZ:A2K1D:a2k1d_hmUnitMode
    NVAR a2k1d_stackCTLo = root:ARPES_LJZ:A2K1D:a2k1d_stackCTLo
    NVAR a2k1d_stackCTHi = root:ARPES_LJZ:A2K1D:a2k1d_stackCTHi
    NVAR a2k1d_stackHideYNumbers = root:ARPES_LJZ:A2K1D:a2k1d_stackHideYNumbers
    
    // Gradient Color Params
    NVAR a2k1d_useCT      = root:ARPES_LJZ:A2K1D:a2k1d_useCT
    NVAR a2k1d_ctInvert   = root:ARPES_LJZ:A2K1D:a2k1d_ctInvert
    SVAR a2k1d_ctPickName = root:ARPES_LJZ:A2K1D:a2k1d_ctPickName

    String base = a2k1d_df_with_colon(a2k1d_baseDF)
    if (!a2k1d_df_exists(base))
        Abort "Plot layers: baseDF not found."
    endif

    // 1. Collect Waves
    if (useCorr)
        Print "A2K1D plot stack: prefer corrected k spectra/peaks."
        Print "A2K1D: using corrected k outputs where available."
    else
        Print "A2K1D plot stack: using default uncorrected preference."
    endif

    // 2. Window Setup & Unique Prefix
    String wname
    String prefix = "Default" // 默认前缀
    if (strlen(a2k1d_baseName) > 0)
        wname = a2k1d_baseName + "_LayerStack_kSpec"
        prefix = a2k1d_baseName
    else
        wname = "A2K1D_LayerStack_kSpec"
    endif
    DoWindow/K $wname 

    // 3. Build valid spectra list
    String listKS = a2k1d_collect_existing_kspec_list_prefer_corr(base, a2k1d_recursive, useCorr)

    Variable m = ItemsInList(listKS, ";")
    if (m <= 0)
        Abort "Error: No *_k_spec waves found."
    endif
    
    // 4. Find Peak Waves
    String p1_path = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 1)
    String p2_path = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 2)
    String p3_path = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 3)

    // 5. Prepare Marker Waves (FIXED: Added prefix to wave names)
    a2k1d_ensure_folder()
    String dispDF = "root:ARPES_LJZ:OUTPUT:A2K1D:"
    
    // 构建带前缀的唯一名称，例如: root:...:p4_Disp_P1_X
    String wnP1X = dispDF + prefix + "_Disp_P1_X"
    String wnP1Y = dispDF + prefix + "_Disp_P1_Y"
    String wnP2X = dispDF + prefix + "_Disp_P2_X"
    String wnP2Y = dispDF + prefix + "_Disp_P2_Y"
    String wnP3X = dispDF + prefix + "_Disp_P3_X"
    String wnP3Y = dispDF + prefix + "_Disp_P3_Y"

    Make/O/N=(m) $wnP1X/Wave=dwP1_X, $wnP1Y/Wave=dwP1_Y
    Make/O/N=(m) $wnP2X/Wave=dwP2_X, $wnP2Y/Wave=dwP2_Y
    Make/O/N=(m) $wnP3X/Wave=dwP3_X, $wnP3Y/Wave=dwP3_Y
    
    dwP1_X = NaN; dwP1_Y = NaN
    dwP2_X = NaN; dwP2_Y = NaN
    dwP3_X = NaN; dwP3_Y = NaN

    // 6. Plot Loop
String wp0 = StringFromList(0, listKS, ";")
Display/N=$wname $wp0
ModifyGraph/W=$wname mode=0
ModifyGraph/W=$wname mirror=2
ModifyGraph/W=$wname offset($NameOfWave($wp0))={0,0}
Label/W=$wname left "Intensity + offset (a.u.)"
Label/W=$wname bottom "k\\B//\\M (Å\\S-1\\M)"

    Variable j, r16, g16, b16
    Variable layerIdx, kVal, intVal
    Variable lift 

    for (j=0; j<m; j+=1)
        String wpj = StringFromList(j, listKS, ";")
        Wave wj = $wpj 
        
        if (j > 0)
            AppendToGraph/W=$wname wj
        endif
        
        Variable currentOffset = j * a2k1d_kvary
        ModifyGraph/W=$wname offset($NameOfWave(wj)) = {0, currentOffset}

        if (a2k1d_useCT)
            Variable tt0 = (m<=1) ? 0 : (j/(m-1.0))
            Variable stackLo = min(max(a2k1d_stackCTLo, 0), 1)
            Variable stackHi = min(max(a2k1d_stackCTHi, 0), 1)
            if (stackHi < stackLo)
                Variable stackTmp = stackLo
                stackLo = stackHi
                stackHi = stackTmp
            endif
            Variable tt = stackLo + tt0*(stackHi-stackLo)
            a2k1d_ctluz_rgb16_at_t(a2k1d_ctPickName, tt, a2k1d_ctInvert, r16, g16, b16)
            ModifyGraph/W=$wname rgb($NameOfWave(wj)) = (r16, g16, b16)
        endif
        
        // --- Calculate Lift Amount ---
        lift = a2k1d_kvary*0.4

        // --- Calculate Markers ---
        layerIdx = a2k1d_get_layer_index_safe(a2k1d_clean_basename(NameOfWave(wj)))
        
        if (layerIdx >= 0)
            // Peak 1
            kVal = a2k1d_value_from_1d_path(p1_path, layerIdx)
            if (numtype(kVal) == 0 && kVal >= min(LeftX(wj), RightX(wj)) && kVal <= max(LeftX(wj), RightX(wj)))
                intVal = a2k1d_safe_y_at_x(wj, kVal)
                if (numtype(intVal) == 0)
                    dwP1_X[j] = kVal
                    dwP1_Y[j] = intVal + currentOffset + lift
                endif
            endif
            
            // Peak 2
            kVal = a2k1d_value_from_1d_path(p2_path, layerIdx)
            if (numtype(kVal) == 0 && kVal >= min(LeftX(wj), RightX(wj)) && kVal <= max(LeftX(wj), RightX(wj)))
                intVal = a2k1d_safe_y_at_x(wj, kVal)
                if (numtype(intVal) == 0)
                    dwP2_X[j] = kVal
                    dwP2_Y[j] = intVal + currentOffset + lift
                endif
            endif

            // Peak 3
            kVal = a2k1d_value_from_1d_path(p3_path, layerIdx)
            if (numtype(kVal) == 0 && kVal >= min(LeftX(wj), RightX(wj)) && kVal <= max(LeftX(wj), RightX(wj)))
                intVal = a2k1d_safe_y_at_x(wj, kVal)
                if (numtype(intVal) == 0)
                    dwP3_X[j] = kVal
                    dwP3_Y[j] = intVal + currentOffset + lift
                endif
            endif
        endif
    endfor

    // 7. Append Markers (FIXED: Use dynamic Trace Name)
    // 之前硬编码了 "Disp_P1_Y"，现在需要获取加上前缀后的真实波形名
    
    if (a2k1d_wave_has_any_finite(dwP1_X))
        AppendToGraph/W=$wname dwP1_Y vs dwP1_X
        String trName1 = NameOfWave(dwP1_Y)
        ModifyGraph/W=$wname mode($trName1)=3, marker($trName1)=19, msize($trName1)=1.5, rgb($trName1)=(0,0,0)
    endif
    if (a2k1d_wave_has_any_finite(dwP2_X))
        AppendToGraph/W=$wname dwP2_Y vs dwP2_X
        String trName2 = NameOfWave(dwP2_Y)
        ModifyGraph/W=$wname mode($trName2)=3, marker($trName2)=17, msize($trName2)=1.5, rgb($trName2)=(65535,0,0)
    endif
    if (a2k1d_wave_has_any_finite(dwP3_X))
        AppendToGraph/W=$wname dwP3_Y vs dwP3_X
        String trName3 = NameOfWave(dwP3_Y)
        ModifyGraph/W=$wname mode($trName3)=3, marker($trName3)=16, msize($trName3)=1.5, rgb($trName3)=(0,0,65535)
    endif
    //============================================================
    // 8) Smart X-axis clamp around peak region (NEW)
    //============================================================
    Variable kLoAuto, kHiAuto
    Variable okRange

    // marginFrac=0.25 表示左右各扩 25% 的 peak-span
    // minAbsMargin=0.03 是绝对最小扩展（单位同 k）
    okRange = a2k1d_peak_global_krange_paths(p1_path, p2_path, p3_path, m, 0.5, 0.03, kLoAuto, kHiAuto)

    if (okRange)
        SetAxis/W=$wname bottom kLoAuto, kHiAuto
    else
        // fallback: keep auto axis
        // SetAxis/A/W=$wname bottom
    endif

    //============================================================
    // 9) Smart Y-axis clamp based on intensity inside [kLoAuto, kHiAuto]
    //    (decouple from offset-driven autoscale)
    //============================================================
    if (okRange)   // 只有在 X-window 合法时才做
        Variable rawMin = NaN, rawMax = NaN
        Variable hasY = 0
        Variable jj

        for (jj=0; jj<m; jj+=1)
            String wpY = StringFromList(jj, listKS, ";")
            Wave/Z wY = $wpY
            if (!WaveExists(wY))
                continue
            endif

            // 只统计峰附近的窗口范围
            WaveStats/Q/R=(kLoAuto, kHiAuto) wY

            if (V_npnts <= 0)
                continue
            endif

            // 这里用窗口内 min/max（原始强度，未加offset）
            if (!hasY)
                rawMin = V_min
                rawMax = V_max
                hasY = 1
            else
                if (V_min < rawMin)
                    rawMin = V_min
                endif
                if (V_max > rawMax)
                    rawMax = V_max
                endif
            endif
        endfor

        if (hasY)
            // 给一点上下 margin（按强度跨度的比例）
            Variable spanY = rawMax - rawMin
            Variable yMargin = 0.08 * spanY
            if (yMargin < 1e-6)
                yMargin = 1e-6
            endif

            // 顶部要加上堆叠 offset + marker lift
            Variable yLo = rawMin - yMargin
            Variable yHi = rawMax + (m-1)*a2k1d_kvary + lift + yMargin

            SetAxis/W=$wname left yLo, yHi
        endif
    endif

    ModifyGraph/W=$wname tickUnit(bottom)=1, tickUnit(left)=1
    ModifyGraph/W=$wname nticks(bottom)=4
    if (a2k1d_stackHideYNumbers != 0)
        ModifyGraph/W=$wname noLabel(left)=1
    else
        ModifyGraph/W=$wname noLabel(left)=0
    endif

    String dirLabel = a2k1d_stack_direction_label(a2k1d_hmUnitMode)
    TextBox/W=$wname/C/N=A2K1D_StackDirection/F=0/A=RT/X=1/Y=4 dirLabel

    String peakLegend = "● P1\r▲ P2"
    if (a2k1d_wave_has_any_finite(dwP3_X))
        peakLegend += "\r● P3"
    endif
    TextBox/W=$wname/C/N=A2K1D_PeakLegend/F=0/A=LB/X=2/Y=2 peakLegend
    
    return 0
End

//============================================================
// Helper: Extract physical index from raw/corrected angle-domain layer names.
// Final k-domain output names are intentionally rejected by the safe parser.
//============================================================
Function a2k1d_btn_plot_peaks_err(ctrlName) : ButtonControl
    String ctrlName

    SVAR a2k1d_baseDF    = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    NVAR a2k1d_hmUnitMode = root:ARPES_LJZ:A2K1D:a2k1d_hmUnitMode
    SVAR a2k1d_baseName  = root:ARPES_LJZ:A2K1D:a2k1d_baseName
    a2k1d_sync_unified_from_legacy_if_missing()
    NVAR LatticeA = root:ARPES_LJZ:A2K1D:LatticeA
    NVAR useCorr = root:ARPES_LJZ:A2K1D:a2k1d_useAngleCorr

    String base = a2k1d_df_with_colon(a2k1d_baseDF)
    if (!a2k1d_df_exists(base))
        Abort "Plot peaks: baseDF not found."
    endif

    if (useCorr)
        Print "A2K1D: using corrected k outputs where available."
    endif

    // Window name
    String wname
    if (strlen(a2k1d_baseName) > 0)
        wname = a2k1d_baseName + "_Peaks_k"
    else
        wname = "A2K1D_Peaks_k"
    endif
    DoWindow/K $wname

    // Find waves (full paths), preferring corrected outputs when requested.
    String p1 = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 1)
    String p2 = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 2)
    String p3 = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 3)

    String s1 = a2k1d_find_preferred_k_sigma(base, a2k1d_recursive, 1)
    String s2 = a2k1d_find_preferred_k_sigma(base, a2k1d_recursive, 2)
    String s3 = a2k1d_find_preferred_k_sigma(base, a2k1d_recursive, 3)

    if (useCorr && a2k1d_path_is_corr_k_output(p1) && !a2k1d_path_is_corr_k_output(s1))
        Print "Corrected peak found but corrected sigma missing for rank 1; plotting without corrected error bar."
        s1 = ""
    endif
    if (useCorr && a2k1d_path_is_corr_k_output(p2) && !a2k1d_path_is_corr_k_output(s2))
        Print "Corrected peak found but corrected sigma missing for rank 2; plotting without corrected error bar."
        s2 = ""
    endif
    if (useCorr && a2k1d_path_is_corr_k_output(p3) && !a2k1d_path_is_corr_k_output(s3))
        Print "Corrected peak found but corrected sigma missing for rank 3; plotting without corrected error bar."
        s3 = ""
    endif

    if (strlen(p1)==0 && strlen(p2)==0 && strlen(p3)==0)
        Abort "Plot peaks: no k peak waves found."
    endif

    String firstPeak = p1
    if (strlen(firstPeak) == 0)
        firstPeak = p2
    endif
    if (strlen(firstPeak) == 0)
        firstPeak = p3
    endif

    Wave wFirst = $firstPeak
    String outDF = "root:ARPES_LJZ:OUTPUT:A2K1D:"
    String axisPath
    if (strlen(a2k1d_baseName) > 0)
        axisPath = outDF + a2k1d_baseName + "_AxisX"
    else
        axisPath = outDF + "A2K1D_AxisX"
    endif

    Wave wAxis = a2k1d_make_axis_wave(DimSize(wFirst,0), axisPath)

    Variable didDisplay = 0
    if (strlen(p1) > 0)
        Wave wP1 = $p1
        Display/N=$wname wP1 vs wAxis
        ModifyGraph/W=$wname rgb($NameOfWave(wP1))=(0,0,0)
        if (strlen(s1) > 0)
            Wave wS1 = $s1
            ErrorBars/W=$wname/RGB=(0,0,0) $NameOfWave(wP1) Y, wave=(wS1, wS1)
        endif
        didDisplay = 1
    endif
    if (strlen(p2) > 0)
        Wave wP2 = $p2
        if (didDisplay)
            AppendToGraph/W=$wname wP2 vs wAxis
        else
            Display/N=$wname wP2 vs wAxis
            didDisplay = 1
        endif
        ModifyGraph/W=$wname rgb($NameOfWave(wP2))=(65535,0,0)
        if (strlen(s2) > 0)
            Wave wS2 = $s2
            ErrorBars/W=$wname/RGB=(0,0,0) $NameOfWave(wP2) Y, wave=(wS2, wS2)
        endif
    endif
    if (strlen(p3) > 0)
        Wave wP3 = $p3
        if (didDisplay)
            AppendToGraph/W=$wname wP3 vs wAxis
        else
            Display/N=$wname wP3 vs wAxis
            didDisplay = 1
        endif
        ModifyGraph/W=$wname rgb($NameOfWave(wP3))=(0,0,65535)
        if (strlen(s3) > 0)
            Wave wS3 = $s3
            ErrorBars/W=$wname/RGB=(0,0,0) $NameOfWave(wP3) Y, wave=(wS3, wS3)
        endif
    endif

    ModifyGraph/W=$wname mirror=2

    if (LatticeA == 0)
        Label/W=$wname left, "k (Å\\S-1\\M)"
    else
        Label/W=$wname left, "k (π/a)"
    endif

    Label/W=$wname bottom, a2k1d_heat_unit_label(a2k1d_hmUnitMode)
    ModifyGraph/W=$wname tickUnit(left)=1
    SetAxis/A/W=$wname

    return 0
End


//============================================================
// MDCTrack angle-correction helpers (angle-domain outputs only)
//============================================================
Function a2k1d_btn_make_corr_peaks(ctrlName) : ButtonControl
    String ctrlName

    SVAR baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    SVAR corrRunDF = root:ARPES_LJZ:A2K1D:a2k1d_corrRunDF

    String base = a2k1d_df_with_colon(baseDF)
    if (!a2k1d_corr_run_is_valid(corrRunDF))
        DoAlert 0, "Invalid MDCTrack correction run."
        return 0
    endif

    String p1 = a2k1d_find_wave_by_tail_ci(base, recursive, "Peak1K")
    String p2 = a2k1d_find_wave_by_tail_ci(base, recursive, "Peak2K")
    String p3 = a2k1d_find_wave_by_tail_ci(base, recursive, "Peak3K")

    String s1 = a2k1d_find_wave_by_tail_ci(base, recursive, "Sigmap1K")
    String s2 = a2k1d_find_wave_by_tail_ci(base, recursive, "Sigmap2K")
    String s3 = a2k1d_find_wave_by_tail_ci(base, recursive, "Sigmap3K")

    Variable ok = 0

    if (strlen(p1) > 0)
        if (strlen(a2k1d_make_corr_peak_angle_wave(p1, corrRunDF)) > 0)
            ok += 1
        endif
    endif
    if (strlen(p2) > 0)
        if (strlen(a2k1d_make_corr_peak_angle_wave(p2, corrRunDF)) > 0)
            ok += 1
        endif
    endif
    if (strlen(p3) > 0)
        if (strlen(a2k1d_make_corr_peak_angle_wave(p3, corrRunDF)) > 0)
            ok += 1
        endif
    endif

    if (strlen(s1) > 0)
        a2k1d_make_corr_sigma_angle_wave(s1, corrRunDF)
    endif
    if (strlen(s2) > 0)
        a2k1d_make_corr_sigma_angle_wave(s2, corrRunDF)
    endif
    if (strlen(s3) > 0)
        a2k1d_make_corr_sigma_angle_wave(s3, corrRunDF)
    endif

    Print "Make Corr Peaks done. Peak outputs created=", ok
    return 0
End


Function a2k1d_btn_corr_peaks_to_k(ctrlName) : ButtonControl
    String ctrlName

    a2k1d_init_defaults_if_needed()

    SVAR a2k1d_baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    NVAR a2k1d_showGraph = root:ARPES_LJZ:A2K1D:a2k1d_showGraph

    Variable oldShow = a2k1d_showGraph
    a2k1d_showGraph = 0

    Variable rc = a2k1d_batch_corr_peaks_to_k(a2k1d_baseDF, a2k1d_recursive)

    a2k1d_showGraph = oldShow

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        if (rc == 0)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: corrected peaks -> k done"
        else
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: corrected peaks -> k failed"
        endif
    endif

    return 0
End

Function a2k1d_btn_corr_layers_to_k(ctrlName) : ButtonControl
    String ctrlName

    a2k1d_init_defaults_if_needed()

    SVAR a2k1d_baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    SVAR a2k1d_corrRunDF = root:ARPES_LJZ:A2K1D:a2k1d_corrRunDF
    NVAR a2k1d_showGraph = root:ARPES_LJZ:A2K1D:a2k1d_showGraph

    if (!a2k1d_corr_run_is_valid(a2k1d_corrRunDF))
        DoAlert 0, "Invalid MDCTrack correction run."
        DoWindow A2K1D_LJZ_P
        if (V_flag)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: corr layers -> k failed"
        endif
        return 0
    endif

    Variable oldShow = a2k1d_showGraph
    a2k1d_showGraph = 0

    Variable rc = a2k1d_batch_corr_layers_to_k(a2k1d_baseDF, a2k1d_recursive, a2k1d_corrRunDF)

    a2k1d_showGraph = oldShow

    DoWindow A2K1D_LJZ_P
    if (V_flag)
        if (rc == 0)
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: corr layers -> k done"
        else
            TitleBox a2k1d_runstat, win=A2K1D_LJZ_P, title="Status: corr layers -> k failed"
        endif
    endif

    return 0
End

Function a2k1d_btn_make_corr_layers(ctrlName) : ButtonControl
    String ctrlName

    SVAR baseDF = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    SVAR corrRunDF = root:ARPES_LJZ:A2K1D:a2k1d_corrRunDF

    if (!a2k1d_corr_run_is_valid(corrRunDF))
        DoAlert 0, "Invalid MDCTrack correction run."
        return 0
    endif

    String list = a2k1d_collect_layers(baseDF, recursive)
    Variable n = ItemsInList(list, ";")
    Variable i, ok, fail
    ok = 0
    fail = 0

    for (i=0; i<n; i+=1)
        String wp = StringFromList(i, list, ";")
        if (strlen(wp) == 0)
            continue
        endif
        String outp = a2k1d_make_corr_layer_angle_wave(wp, corrRunDF)
        if (strlen(outp) > 0)
            ok += 1
        else
            fail += 1
        endif
    endfor

    Printf "Make Corr Layers done: ok=%d fail=%d total=%d\r", ok, fail, n
    return 0
End

Function a2k1d_btn_open_ct_browser(ctrlName) : ButtonControl
    String ctrlName
    String winName = "A2K1D_CT_Browser_Panel"
    
    // 1. 窗口复用
    DoWindow/F $winName
    if (V_flag != 0)
        return 0
    endif
    
    // 2. 确保列表不为空 (防呆)
    Wave/T wList = root:ARPES_LJZ:A2K1D:CT_LB_Items
    if (DimSize(wList, 0) == 0)
        a2k1d_rebuild_ct_list()
    endif
    
    // 3. 同步选中状态 (高亮当前项)
    Wave/U/B wSel = root:ARPES_LJZ:A2K1D:CT_LB_Sel
    wSel = 0
    SVAR curName = root:ARPES_LJZ:A2K1D:a2k1d_ctPickName
    FindValue/TEXT=curName/TXOP=4 wList
    Variable findIdx = -1
    if (V_Value >= 0)
        wSel[V_Value] = 1
        findIdx = V_Value
    endif

    // 4. 创建面板
    NewPanel/K=1/W=(500,200,750,600) as "Select Color Table"
    DoWindow/C $winName
    
    // 列表框：直接引用全局波形
    ListBox lb_ct,pos={10,10},size={230,350},proc=a2k1d_ct_browser_lb_proc
    ListBox lb_ct,listWave=root:ARPES_LJZ:A2K1D:CT_LB_Items
    ListBox lb_ct,selWave=root:ARPES_LJZ:A2K1D:CT_LB_Sel
    ListBox lb_ct,mode=1
    
    if (findIdx >= 0)
        ListBox lb_ct, row=findIdx
    endif
    
    // 按钮
    Button btn_refresh,pos={10,370},size={60,20},title="Refresh",proc=a2k1d_ct_browser_refresh
    Button btn_close,pos={180,370},size={60,20},title="Close",proc=a2k1d_ct_browser_close
End

// 新增：手动刷新按钮 (如果你加了新颜色，点这个)
Function a2k1d_ct_browser_refresh(ctrlName) : ButtonControl
    String ctrlName
    a2k1d_rebuild_ct_list()
    // 刷新 ListBox
    ListBox lb_ct, win=A2K1D_CT_Browser_Panel, listWave=root:ARPES_LJZ:A2K1D:CT_LB_Items
    ListBox lb_ct, win=A2K1D_CT_Browser_Panel, selWave=root:ARPES_LJZ:A2K1D:CT_LB_Sel
    return 0
End

Function a2k1d_ct_browser_lb_proc(ctrlName, row, col, eventCode) : ListBoxControl
    String ctrlName
    Variable row, col, eventCode

    if (eventCode != 1 && eventCode != 4 && eventCode != 3)
        return 0
    endif
    if (row < 0)
        return 0
    endif
    
    // 1. 获取选中的名字
    Wave/T wList = root:ARPES_LJZ:A2K1D:CT_LB_Items
    String selectedName = wList[row]
    
    // 2. 更新选中波形 (ListBox 需要手动互斥，或者依赖 mode=1 自动处理，这里手动保险)
    Wave/U/B wSel = root:ARPES_LJZ:A2K1D:CT_LB_Sel
    wSel = 0
    wSel[row] = 1
    
    // 3. 更新全局变量
    SVAR a2k1d_ctPickName = root:ARPES_LJZ:A2K1D:a2k1d_ctPickName
    a2k1d_ctPickName = selectedName
    
    // 4. 更新主界面显示
    DoWindow A2K1D_LJZ_P
    if (V_flag)
        TitleBox a2k1d_tb_ct_current, win=A2K1D_LJZ_P, title="CT: " + selectedName
    endif
    
    // 5. 双击关闭
    if (eventCode == 4)
        DoWindow/K A2K1D_CT_Browser_Panel
    endif

    return 0
End

Function a2k1d_ct_browser_close(ctrlName) : ButtonControl
    String ctrlName
    DoWindow/K A2K1D_CT_Browser_Panel
    return 0
End


// ------------------------------------------------------------
// Get RGB(0..65535) from CTLUZ CTLIB palette at t in [0,1]
// If CTLIB:<pickName> missing, fall back to current root:ARPES_LJZ:CTLUZ:ct_table
// If ct_lut exists, use it: t -> s (base space) -> color index
// ------------------------------------------------------------
Function a2k1d_ctluz_rgb16_at_t(pickName, t, inv, r16, g16, b16)
    String pickName
    Variable t, inv
    Variable &r16, &g16, &b16

    // ensure CTLUZ folders + builtins exist
    ctluz_ensure_folder()

    Variable tt = t
    if (tt < 0) 
     tt = 0 ; 
     endif
    if (tt > 1) 
     tt = 1 ; 
     endif
    if (inv)
        tt = 1 - tt
    endif

    Wave/Z/W/U ct = $("root:ARPES_LJZ:CTLUZ:CTLIB:"+pickName)
    if (!WaveExists(ct))
        Wave/W/U ct2 = root:ARPES_LJZ:CTLUZ:ct_table
        ct = ct2
    endif

    Wave/Z lut = root:ARPES_LJZ:CTLUZ:ct_lut     // float 0..1
    Variable n = DimSize(ct, 0)
    if (n <= 1)
        r16 = 0; g16 = 0; b16 = 0
        return 0
    endif

    Variable it = round(tt*(n-1))
    if (it < 0) 
     it = 0 ;
     endif
    if (it > n-1) 
     it = n-1 ;
     endif

    // t -> s via LUT (if exists), else s=t
    Variable s = tt
    if (WaveExists(lut) && DimSize(lut,0) == n)
        s = lut[it]
        if (s < 0) 
         s = 0 
          endif
        if (s > 1) 
         s = 1 
          endif
    endif

    Variable ic = round(s*(n-1))
    if (ic < 0) 
     ic = 0 
      endif
    if (ic > n-1) 
     ic = n-1 
     endif

    r16 = ct[ic][0]
    g16 = ct[ic][1]
    b16 = ct[ic][2]
    return 0
End

Function a2k1d_pm_ctlib_proc(ctrlName, popNum, popStr) : PopupMenuControl
    String ctrlName, popStr
    Variable popNum

    SVAR a2k1d_ctPickName = root:ARPES_LJZ:A2K1D:a2k1d_ctPickName
    if (StringMatch(popStr, "None"))
        a2k1d_ctPickName = ""
    else
        a2k1d_ctPickName = popStr
    endif
    return 0
End

//============================================================
// Rebuild Color Table List (将字符串转为全局波形)
//============================================================
Function a2k1d_rebuild_ct_list()
    ctluz_ensure_folder()

    String df0 = GetDataFolder(1)
    SetDataFolder root:ARPES_LJZ:A2K1D
    
    // 1. 获取源字符串
    SVAR/Z listStr = root:ARPES_LJZ:CTLUZ:ctlib_menu_list
    if (!SVAR_Exists(listStr))
        // 尝试修复：如果字符串不存在，可能是 CTLUZ 还没初始化
        // 这里只是防错，生成一个空的
        String/G root:ARPES_LJZ:CTLUZ:ctlib_menu_list = ""
        SVAR listStr = root:ARPES_LJZ:CTLUZ:ctlib_menu_list
    endif
    
    // 2. 获取波形引用
    Wave/T CT_LB_Items = CT_LB_Items
    Wave/U/B CT_LB_Sel = CT_LB_Sel
    
    // 3. 填充波形
    Variable n = ItemsInList(listStr, ";")
    Redimension/N=(n) CT_LB_Items, CT_LB_Sel
    
    Variable i
    for(i=0; i<n; i+=1)
        CT_LB_Items[i] = StringFromList(i, listStr, ";")
        CT_LB_Sel[i] = 0 // 重置选择
    endfor
    
    // 4. 同步当前选中的项
    SVAR curName = root:ARPES_LJZ:A2K1D:a2k1d_ctPickName
    FindValue/TEXT=curName/TXOP=4 CT_LB_Items
    if (V_Value >= 0)
        CT_LB_Sel[V_Value] = 1
    endif
    
    SetDataFolder df0
    return 0
End

//============================================================
// Helper: compute global k-range from peak waves (peak*_k) in a sensible way
// - scans up to maxLayers points (usually m, the number of layers plotted)
// - ignores NaN/Inf
// - expands range by (marginFrac) of span, with a minimum absolute margin
// Returns: 1 if valid range found, else 0.
//============================================================
Function a2k1d_peak_global_krange(wP1_k, wP2_k, wP3_k, maxLayers, marginFrac, minAbsMargin, kLo, kHi)
    Wave/Z wP1_k, wP2_k, wP3_k
    Variable maxLayers, marginFrac, minAbsMargin
    Variable &kLo, &kHi

    Variable has = 0
    Variable kmin = 0, kmax = 0
    Variable i, kv

    // local helper macro-like: update min/max
    // (Igor doesn't have inline macros; we just repeat)

    if (WaveExists(wP1_k))
        for (i=0; i<min(maxLayers, DimSize(wP1_k,0)); i+=1)
            kv = wP1_k[i]
            if (numtype(kv)==0)
                if (!has)
                    kmin = kv; kmax = kv; has = 1
                else
                    if (kv < kmin)  
                    kmin = kv
                    endif
                    if (kv > kmax)  
                    kmax = kv
                    endif
                endif
            endif
        endfor
    endif

    if (WaveExists(wP2_k))
        for (i=0; i<min(maxLayers, DimSize(wP2_k,0)); i+=1)
            kv = wP2_k[i]
            if (numtype(kv)==0)
                if (!has)
                    kmin = kv; kmax = kv; has = 1
                else
                    if (kv < kmin)  
                    kmin = kv
                    endif
                    if (kv > kmax)  
                    kmax = kv
                    endif
                endif
            endif
        endfor
    endif

    if (WaveExists(wP3_k))
        for (i=0; i<min(maxLayers, DimSize(wP3_k,0)); i+=1)
            kv = wP3_k[i]
            if (numtype(kv)==0)
                if (!has)
                    kmin = kv; kmax = kv; has = 1
                else
                    if (kv < kmin)  
                    kmin = kv
                    endif
                    if (kv > kmax)  
                    kmax = kv
                    endif
                endif
            endif
        endfor
    endif

    if (!has)
        return 0
    endif

    Variable span = abs(kmax - kmin)
    Variable margin = span * marginFrac
    if (margin < minAbsMargin)
        margin = minAbsMargin
    endif
    if (span < 1e-12)
        // all peaks nearly identical -> just give symmetric small window
        margin = max(minAbsMargin, 0.02)
    endif

    kLo = min(kmin, kmax) - margin
    kHi = max(kmin, kmax) + margin

    // guard
    if (numtype(kLo)!=0 || numtype(kHi)!=0 || abs(kHi-kLo)<1e-12)
        return 0
    endif

    return 1
End

//============================================================
// Safe 1D linear interpolation at x (no out-of-range).
// Works for increasing or decreasing x-scale.
// Returns NaN if wave invalid.
//============================================================
Function a2k1d_safe_y_at_x(w, x)
    Wave w
    Variable x

    Variable n = DimSize(w,0)
    if (n <= 0)
        return NaN
    endif
    if (n == 1)
        return w[0]
    endif

    // x domain (handle reversed scale)
    Variable x0 = LeftX(w)
    Variable x1 = RightX(w)
    Variable lo = min(x0,x1)
    Variable hi = max(x0,x1)

    // clamp x into legal domain
    if (x < lo) 
        x = lo
    endif
    if (x > hi) 
        x = hi
    endif

    // convert to point index (may be fractional conceptually, but x2pnt gives nearest integer-like)
    Variable p = x2pnt(w, x)

    // critical: clamp p to [0, n-2] so p+1 is always valid
    if (p < 0)
        p = 0
    endif
    if (p > n-2)
        p = n-2
    endif

    Variable xa = pnt2x(w, p)
    Variable xb = pnt2x(w, p+1)

    // avoid division by zero (shouldn't happen for proper scaling, but just in case)
    if (abs(xb - xa) < 1e-15)
        return w[p]
    endif

    Variable t = (x - xa) / (xb - xa)
    return w[p] + t * (w[p+1] - w[p])
End

Function a2k1d_pm_hm_unit_proc(ctrlName, popNum, popStr) : PopupMenuControl
    String ctrlName, popStr
    Variable popNum

    NVAR a2k1d_hmUnitMode = root:ARPES_LJZ:A2K1D:a2k1d_hmUnitMode
    a2k1d_hmUnitMode = popNum - 1
    return 0
End

Function/S a2k1d_heat_unit_label(mode)
    Variable mode

    switch(mode)
        case 0:
            return "Delay Time (ps)"
        case 1:
            return "Temperature (K)"
        case 2:
            return "Fluence (μJ/cm\\S2\\M)"
        default:
            return "Frame Index"
    endswitch
End

Function/S a2k1d_stack_direction_label(mode)
    Variable mode

    switch(mode)
        case 0:
            return "increasing delay"
        case 1:
            return "increasing temperature"
        case 2:
            return "increasing fluence"
        default:
            return "increasing frame index"
    endswitch
End

Function a2k1d_apply_twoband_ct_to_image(winName, imgName, imgWave, xViewLo, xViewHi)
    String winName, imgName
    Wave imgWave
    Variable xViewLo, xViewHi

    Wave ctLocal = a2k1d_make_twoband_ct(256)
    String ctPath = "root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_twoband_ct"

    String imgInst = imgName
    String imgList = ImageNameList(winName, ";")
    if (WhichListItem(imgInst, imgList, ";") < 0)
        imgInst = StringFromList(0, imgList, ";")
    endif
    if (strlen(imgInst) == 0)
        return -1
    endif

    Variable pLo = round(x2pnt(imgWave, min(xViewLo, xViewHi)))
    Variable pHi = round(x2pnt(imgWave, max(xViewLo, xViewHi)))

    if (pLo < 0)
        pLo = 0
    endif
    if (pHi > DimSize(imgWave,0)-1)
        pHi = DimSize(imgWave,0)-1
    endif
    if (pHi < pLo)
        Variable tmpP = pLo
        pLo = pHi
        pHi = tmpP
    endif

    Duplicate/O/R=[pLo,pHi][] imgWave, root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_ctStat2D
    Wave stat2D = root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_ctStat2D

    Redimension/N=(DimSize(stat2D,0)*DimSize(stat2D,1)) stat2D
    Sort stat2D, stat2D

    Variable n = DimSize(stat2D,0)
    if (n < 2)
        KillWaves/Z stat2D
        return -1
    endif

    // 这是给增强后的 display wave 用的，不是原始图
    Variable zLo = stat2D[round(0.08*(n-1))]
    Variable zHi = stat2D[round(0.995*(n-1))]

    if (numtype(zLo) != 0 || numtype(zHi) != 0 || zHi <= zLo)
        zLo = 0.03
        zHi = 1.00
    endif

    ModifyImage/W=$winName $imgInst, ctab={zLo,zHi,$ctPath,0}
    DoUpdate

    KillWaves/Z stat2D
    return 0
End

Function a2k1d_btn_plot_layers_heatmap(ctrlName) : ButtonControl
    String ctrlName

    SVAR a2k1d_baseDF     = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive  = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    SVAR a2k1d_baseName   = root:ARPES_LJZ:A2K1D:a2k1d_baseName
    NVAR useCorr = root:ARPES_LJZ:A2K1D:a2k1d_useAngleCorr

    NVAR a2k1d_hmY0       = root:ARPES_LJZ:A2K1D:a2k1d_hmY0
    NVAR a2k1d_hmDY       = root:ARPES_LJZ:A2K1D:a2k1d_hmDY
    NVAR a2k1d_hmYMul     = root:ARPES_LJZ:A2K1D:a2k1d_hmYMul
    NVAR a2k1d_hmUnitMode = root:ARPES_LJZ:A2K1D:a2k1d_hmUnitMode
    NVAR LatticeA = root:ARPES_LJZ:A2K1D:LatticeA

    String base = a2k1d_df_with_colon(a2k1d_baseDF)
    if (!a2k1d_df_exists(base))
        Abort "Heatmap: baseDF not found."
    endif

    //================================================
    // 1) collect *_k_spec and sort
    //================================================
    if (useCorr)
        Print "A2K1D: using corrected k outputs where available."
    endif
    String listKS = a2k1d_collect_existing_kspec_list_prefer_corr(base, a2k1d_recursive, useCorr)

    Variable m = ItemsInList(listKS, ";")
    if (m <= 0)
        Abort "Heatmap: no *_k_spec waves found."
    endif

    String wp0 = StringFromList(0, listKS, ";")
    Wave/Z w0 = $wp0
    if (!WaveExists(w0))
        Abort "Heatmap: template wave missing."
    endif

    Variable nx = DimSize(w0, 0)
    if (nx <= 1)
        Abort "Heatmap: template wave has too few points."
    endif

    Variable xLo = min(LeftX(w0), RightX(w0))
    Variable xHi = max(LeftX(w0), RightX(w0))

    //================================================
    // 2) build raw image matrix: dim0 = k, dim1 = delay index
    //================================================
    a2k1d_ensure_folder()
    String outDF = "root:ARPES_LJZ:OUTPUT:A2K1D:"
    String prefix
    if (strlen(a2k1d_baseName) > 0)
        prefix = a2k1d_baseName
    else
        prefix = "A2K1D"
    endif

    String imgName = outDF + prefix + "_LayerHeat_kSpec"
    Make/O/D/N=(nx, m) $imgName
    Wave img = $imgName
    img = NaN

    Variable i, j
    for (j=0; j<m; j+=1)
        String wpj = StringFromList(j, listKS, ";")
        Wave/Z wj = $wpj
        if (!WaveExists(wj))
            continue
        endif

        Variable xLoJ = min(LeftX(wj), RightX(wj))
        Variable xHiJ = max(LeftX(wj), RightX(wj))

        if (DimSize(wj,0) == nx && abs(xLoJ-xLo) < 1e-9 && abs(xHiJ-xHi) < 1e-9)
            for (i=0; i<nx; i+=1)
                img[i][j] = wj[i]
            endfor
        else
            for (i=0; i<nx; i+=1)
                Variable xx = xLo + (xHi-xLo) * i / (nx-1.0)
                img[i][j] = a2k1d_safe_y_at_x(wj, xx)
            endfor
        endif
    endfor

    // raw image scales: x=k, y=delay-index-physical
    SetScale/I x, xLo, xHi, WaveUnits(w0, 0), img
    SetScale/I y, a2k1d_axis_value_from_index(0), a2k1d_axis_value_from_index(m-1), "", img
    SetScale d, 0, 0, WaveUnits(w0, -1), img

    //================================================
    // 3) peak overlay waves
    //================================================
    String p1_path = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 1)
    String p2_path = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 2)
    String p3_path = a2k1d_find_preferred_k_peak(base, a2k1d_recursive, 3)

    String s1_path = a2k1d_find_preferred_k_sigma(base, a2k1d_recursive, 1)
    String s2_path = a2k1d_find_preferred_k_sigma(base, a2k1d_recursive, 2)
    String s3_path = a2k1d_find_preferred_k_sigma(base, a2k1d_recursive, 3)

    if (useCorr && a2k1d_path_is_corr_k_output(p1_path) && !a2k1d_path_is_corr_k_output(s1_path))
        Print "Corrected peak found but corrected sigma missing for rank 1; plotting without corrected error bar."
        s1_path = ""
    endif
    if (useCorr && a2k1d_path_is_corr_k_output(p2_path) && !a2k1d_path_is_corr_k_output(s2_path))
        Print "Corrected peak found but corrected sigma missing for rank 2; plotting without corrected error bar."
        s2_path = ""
    endif
    if (useCorr && a2k1d_path_is_corr_k_output(p3_path) && !a2k1d_path_is_corr_k_output(s3_path))
        Print "Corrected peak found but corrected sigma missing for rank 3; plotting without corrected error bar."
        s3_path = ""
    endif

    String wnP1X = outDF + prefix + "_HM_P1_X"
    String wnP1Y = outDF + prefix + "_HM_P1_Y"
    String wnP2X = outDF + prefix + "_HM_P2_X"
    String wnP2Y = outDF + prefix + "_HM_P2_Y"
    String wnP3X = outDF + prefix + "_HM_P3_X"
    String wnP3Y = outDF + prefix + "_HM_P3_Y"
    String wnS1  = outDF + prefix + "_HM_S1"
    String wnS2  = outDF + prefix + "_HM_S2"
    String wnS3  = outDF + prefix + "_HM_S3"
    
    Make/O/D/N=(m) $wnP1X/WAVE=hmP1X, $wnP1Y/WAVE=hmP1Y
    Make/O/D/N=(m) $wnP2X/WAVE=hmP2X, $wnP2Y/WAVE=hmP2Y
    Make/O/D/N=(m) $wnP3X/WAVE=hmP3X, $wnP3Y/WAVE=hmP3Y
    Make/O/D/N=(m) $wnS1/WAVE=hmS1, $wnS2/WAVE=hmS2, $wnS3/WAVE=hmS3

    hmP1X = NaN; hmP1Y = NaN
    hmP2X = NaN; hmP2Y = NaN
    hmP3X = NaN; hmP3Y = NaN
    hmS1  = NaN; hmS2  = NaN; hmS3  = NaN

    for (j=0; j<m; j+=1)
        String wpj2 = StringFromList(j, listKS, ";")
        String wnj2 = a2k1d_tail_wavename(wpj2)
        Variable layerIdx2 = a2k1d_get_layer_index_safe(a2k1d_clean_basename(wnj2))
        Variable yVal = a2k1d_axis_value_from_index(j)

        if (layerIdx2 < 0)
            continue
        endif

        Variable p1v = a2k1d_value_from_1d_path(p1_path, layerIdx2)
        if (numtype(p1v) == 0)
            hmP1X[j] = p1v
            hmP1Y[j] = yVal

            Variable s1v = a2k1d_value_from_1d_path(s1_path, layerIdx2)
            if (numtype(s1v) == 0)
                hmS1[j] = s1v
            endif
        endif

        Variable p2v = a2k1d_value_from_1d_path(p2_path, layerIdx2)
        if (numtype(p2v) == 0)
            hmP2X[j] = p2v
            hmP2Y[j] = yVal

            Variable s2v = a2k1d_value_from_1d_path(s2_path, layerIdx2)
            if (numtype(s2v) == 0)
                hmS2[j] = s2v
            endif
        endif

        Variable p3v = a2k1d_value_from_1d_path(p3_path, layerIdx2)
        if (numtype(p3v) == 0)
            hmP3X[j] = p3v
            hmP3Y[j] = yVal

            Variable s3v = a2k1d_value_from_1d_path(s3_path, layerIdx2)
            if (numtype(s3v) == 0)
                hmS3[j] = s3v
            endif
        endif
    endfor

    //================================================
    // 3.5) make display wave by selected heatmap mode
    //================================================
    NVAR a2k1d_hmDisplayMode = root:ARPES_LJZ:A2K1D:a2k1d_hmDisplayMode
    NVAR a2k1d_hmLoFrac      = root:ARPES_LJZ:A2K1D:a2k1d_hmLoFrac
    NVAR a2k1d_hmHiFrac      = root:ARPES_LJZ:A2K1D:a2k1d_hmHiFrac
    NVAR a2k1d_hmGamma       = root:ARPES_LJZ:A2K1D:a2k1d_hmGamma
    NVAR a2k1d_hmBgSmooth    = root:ARPES_LJZ:A2K1D:a2k1d_hmBgSmooth

    String imgDispPath = ""

    if (a2k1d_hmDisplayMode == 3)
        Variable dispWid1      = 0.006
        Variable dispWid2      = 0.009
        Variable dispWid3      = 0.012
        Variable dispGain1     = 1.00
        Variable dispGain2     = 1.25
        Variable dispGain3     = 1.55
        Variable dispBgSmooth  = 17
        Variable dispBaseFrac  = 0.85
        Variable dispPeakThresh = 0.10

        Wave imgDispLegacy = a2k1d_make_peak_guided_display_wave(img, hmP1X, hmP2X, hmP3X, dispWid1, dispWid2, dispWid3, dispGain1, dispGain2, dispGain3, dispBgSmooth, dispBaseFrac, dispPeakThresh)
        imgDispPath = GetWavesDataFolder(imgDispLegacy, 2)
    else
        Variable doBgSub = 0
        if (a2k1d_hmDisplayMode == 2)
            doBgSub = 1
        endif

        Wave imgDispSoft = a2k1d_make_row_norm_display_wave(img, a2k1d_hmLoFrac, a2k1d_hmHiFrac, a2k1d_hmGamma, a2k1d_hmBgSmooth, doBgSub)
        imgDispPath = GetWavesDataFolder(imgDispSoft, 2)
    endif

    Wave/Z imgDisp = $imgDispPath
    if (!WaveExists(imgDisp))
        Abort "Heatmap: display wave generation failed."
    endif
    //================================================
    // 3.6) build PLOTTING wave directly in swapped orientation
    // final display:
    //   horizontal axis = delay
    //   vertical axis   = k
    // so AppendImage needs dim0 = delay, dim1 = k
    //================================================
    String imgPlotName = outDF + prefix + "_LayerHeat_kSpec_SwappedPlot"
    Make/O/D/N=(m, nx) $imgPlotName
    Wave imgPlot = $imgPlotName

    for (j=0; j<m; j+=1)
        for (i=0; i<nx; i+=1)
            imgPlot[j][i] = imgDisp[i][j]
        endfor
    endfor

	Variable delayLo = a2k1d_axis_value_from_index(0)
	Variable delayHi = a2k1d_axis_value_from_index(m-1)
	SetScale/I x, delayLo, delayHi, "", imgPlot
    SetScale/I y, xLo, xHi, WaveUnits(w0, 0), imgPlot
    SetScale d, 0, 0, WaveUnits(w0, -1), imgPlot

    //================================================
    // 4) display in final geometry (NO swapXY here)
    //================================================
    String wname
    if (strlen(a2k1d_baseName) > 0)
        wname = a2k1d_baseName + "_LayerHeat_kSpec"
    else
        wname = "A2K1D_LayerHeat_kSpec"
    endif

    DoWindow/K $wname
    Display/N=$wname
    AppendImage imgPlot

    ModifyGraph/W=$wname standoff=0
    ModifyGraph/W=$wname mirror=2

    Label/W=$wname bottom a2k1d_heat_unit_label(a2k1d_hmUnitMode)
    if (LatticeA == 0)
        Label/W=$wname left "k\\B//\\M (Å\\S-1\\M)"
    else
        Label/W=$wname left "k (π/a)"
    endif

    SetAxis/W=$wname bottom delayLo, delayHi

    // k window (used both for axis crop and CT stats)
    Variable kLoAuto, kHiAuto
    Variable okRange
    okRange = a2k1d_peak_global_krange_paths(p1_path, p2_path, p3_path, m, 0.5, 0.03, kLoAuto, kHiAuto)

    if (okRange)
        SetAxis/W=$wname left kLoAuto, kHiAuto
    else
        SetAxis/W=$wname left xLo, xHi
    endif

    // apply CT to plotted image instance,
    // but use imgDisp (unswapped, k along dim0) for statistics window
    // apply fixed 3-peak CT (不要再做 percentile 压缩)
    String imgInst = StringFromList(0, ImageNameList(wname, ";"))
    if (a2k1d_hmDisplayMode == 3)
        a2k1d_apply_threepeak_ct_to_image(wname, imgInst)
    else
        a2k1d_apply_personal_soft_heat_ct_to_image(wname, imgInst)
    endif

    ColorScale/C/N=heatScale/F=0/A=RB/E=0/W=$wname image=$imgInst, heightPct=30, widthPct=3, frame=1

    //================================================
    // 5) overlay peaks in the SAME swapped coordinate system
    // x = delay, y = k
    // so: AppendToGraph yWave(k) vs xWave(delay)
    //================================================
    if (a2k1d_wave_has_any_finite(hmP1X))
        AppendToGraph/W=$wname hmP1X vs hmP1Y
        ModifyGraph/W=$wname mode($NameOfWave(hmP1X))=3,marker($NameOfWave(hmP1X))=19,msize($NameOfWave(hmP1X))=3,rgb($NameOfWave(hmP1X))=(0,0,0)
        if (a2k1d_wave_has_any_finite(hmS1))
            ErrorBars/W=$wname/RGB=(0,0,0) $NameOfWave(hmP1X) Y, wave=(hmS1,hmS1)
        endif
    endif

    if (a2k1d_wave_has_any_finite(hmP2X))
        AppendToGraph/W=$wname hmP2X vs hmP2Y
        ModifyGraph/W=$wname mode($NameOfWave(hmP2X))=3,marker($NameOfWave(hmP2X))=17,msize($NameOfWave(hmP2X))=3,rgb($NameOfWave(hmP2X))=(52000,12000,6000)
        if (a2k1d_wave_has_any_finite(hmS2))
            ErrorBars/W=$wname/RGB=(52000,12000,6000) $NameOfWave(hmP2X) Y, wave=(hmS2,hmS2)
        endif
    endif

    if (a2k1d_wave_has_any_finite(hmP3X))
        AppendToGraph/W=$wname hmP3X vs hmP3Y
        ModifyGraph/W=$wname mode($NameOfWave(hmP3X))=3,marker($NameOfWave(hmP3X))=16,msize($NameOfWave(hmP3X))=3,rgb($NameOfWave(hmP3X))=(0,18000,52000)
        if (a2k1d_wave_has_any_finite(hmS3))
            ErrorBars/W=$wname/RGB=(0,18000,52000) $NameOfWave(hmP3X) Y, wave=(hmS3,hmS3)
        endif
    endif

    ModifyGraph/W=$wname tickUnit(bottom)=1, tickUnit(left)=1

    return 0
End

Function/WAVE a2k1d_make_twoband_ct(nSamp)
    Variable nSamp

    a2k1d_ensure_folder()
    if (nSamp < 2)
        nSamp = 256
    endif

    String outPath = "root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_twoband_ct"
    Make/O/W/U/N=(nSamp,3) $outPath
    Wave ct = $outPath

    Variable i, t, u
    Variable r, g, b

    for (i=0; i<nSamp; i+=1)
        t = i/(nSamp-1.0)

        if (t < 0.22)
            // 背景：白 -> 很浅灰蓝
            u = t/0.22
            r = a2k1d_lerp(65535, 59000, u)
            g = a2k1d_lerp(65535, 59000, u)
            b = a2k1d_lerp(65535, 62000, u)

        elseif (t < 0.46)
            // 第一峰：浅灰 -> 橙 -> 深红
            u = (t-0.22)/(0.46-0.22)
            r = a2k1d_lerp(59000, 65535, u)
            g = a2k1d_lerp(59000,  8000, u)
            b = a2k1d_lerp(62000,     0, u)

        elseif (t < 0.58)
            // 中间分隔：红 -> 近白
            u = (t-0.46)/(0.58-0.46)
            r = a2k1d_lerp(65535, 61000, u)
            g = a2k1d_lerp( 8000, 61000, u)
            b = a2k1d_lerp(    0, 65535, u)

        else
            // 第二峰：近白 -> 亮蓝 -> 深蓝
            u = (t-0.58)/(1.00-0.58)
            r = a2k1d_lerp(61000,     0, u)
            g = a2k1d_lerp(61000, 12000, u)
            b = a2k1d_lerp(65535, 65535, u)
        endif

        r = max(0, min(65535, r))
        g = max(0, min(65535, g))
        b = max(0, min(65535, b))

        ct[i][0] = r
        ct[i][1] = g
        ct[i][2] = b
    endfor

    return ct
End

Function a2k1d_lerp(a, b, u)
    Variable a, b, u
    return a + (b-a)*u
End

// legacy peak-guided visualization; not recommended as default paper figure because the base image contains fit-position prior.
Function/WAVE a2k1d_make_peak_guided_display_wave(imgIn, wP1X, wP2X, wP3X, wid1, wid2, wid3, gain1, gain2, gain3, bgSmoothN, baseFrac, peakThresh)
    Wave imgIn
    Wave wP1X, wP2X, wP3X
    Variable wid1, wid2, wid3, gain1, gain2, gain3, bgSmoothN, baseFrac, peakThresh

    a2k1d_ensure_folder()

    Variable nx = DimSize(imgIn, 0)
    Variable ny = DimSize(imgIn, 1)

    String outDF = "root:ARPES_LJZ:OUTPUT:A2K1D:"

    String dispPath = outDF + "a2k1d_img_disp"
    String rowPath  = outDF + "a2k1d_rowTmp"
    String bgPath   = outDF + "a2k1d_bgTmp"
    String resPath  = outDF + "a2k1d_resTmp"

    Make/O/D/N=(nx, ny) $dispPath
    Make/O/D/N=(nx)     $rowPath, $bgPath, $resPath

    Wave imgDisp = $dispPath
    Wave rowTmp  = $rowPath
    Wave bgTmp   = $bgPath
    Wave resTmp  = $resPath

    SetScale/P x, DimOffset(imgIn,0), DimDelta(imgIn,0), WaveUnits(imgIn,0), rowTmp
    SetScale/P x, DimOffset(imgIn,0), DimDelta(imgIn,0), WaveUnits(imgIn,0), bgTmp
    SetScale/P x, DimOffset(imgIn,0), DimDelta(imgIn,0), WaveUnits(imgIn,0), resTmp

    Variable i, j
    Variable xVal, p1, p2, p3, m1, m2, m3
    Variable rowMaxRes, rowMinRaw, rowMaxRaw, rawN
    Variable d1, d2, d3
    Variable c1, c2, c3, cMax, alpha
    Variable baseV

    // fixed numeric bands that match the CT
    Variable bgLo = 0.03, bgHi = 0.16
    Variable p1Lo = 0.22, p1Hi = 0.46
    Variable p2Lo = 0.50, p2Hi = 0.74
    Variable p3Lo = 0.78, p3Hi = 0.98

    imgDisp = 0

    for (j=0; j<ny; j+=1)

        // raw row
        rowTmp = imgIn[p][j]

        WaveStats/Q rowTmp
        rowMinRaw = V_min
        rowMaxRaw = V_max

        if (numtype(rowMinRaw) != 0 || numtype(rowMaxRaw) != 0 || rowMaxRaw <= rowMinRaw)
            continue
        endif

        // smooth background
        bgTmp = rowTmp[p]
        if (bgSmoothN > 1)
            Smooth bgSmoothN, bgTmp
        endif

        // positive residual
        resTmp = rowTmp[p] - bgTmp[p]
        resTmp = max(resTmp[p], 0)

        WaveStats/Q resTmp
        rowMaxRes = V_max
        if (numtype(rowMaxRes) != 0 || rowMaxRes <= 0)
            // 没有明显结构时仍保留背景
            for (i=0; i<nx; i+=1)
                rawN = (rowTmp[i] - rowMinRaw) / (rowMaxRaw - rowMinRaw)
                rawN = max(0, min(1, rawN))
                imgDisp[i][j] = bgLo + (bgHi-bgLo) * min(1, baseFrac * sqrt(rawN))
            endfor
            continue
        endif

        // init peak states
        p1 = NaN; p2 = NaN; p3 = NaN
        m1 = 0;   m2 = 0;   m3 = 0

        if (j < DimSize(wP1X,0) && numtype(wP1X[j]) == 0)
            p1 = wP1X[j]
            WaveStats/Q/R=(p1-1.2*wid1, p1+1.2*wid1) resTmp
            if (V_npnts > 0 && numtype(V_max) == 0 && V_max > 0)
                m1 = V_max
            endif
        endif

        if (j < DimSize(wP2X,0) && numtype(wP2X[j]) == 0)
            p2 = wP2X[j]
            WaveStats/Q/R=(p2-1.2*wid2, p2+1.2*wid2) resTmp
            if (V_npnts > 0 && numtype(V_max) == 0 && V_max > 0)
                m2 = V_max
            endif
        endif

        if (j < DimSize(wP3X,0) && numtype(wP3X[j]) == 0)
            p3 = wP3X[j]
            WaveStats/Q/R=(p3-1.2*wid3, p3+1.2*wid3) resTmp
            if (V_npnts > 0 && numtype(V_max) == 0 && V_max > 0)
                m3 = V_max
            endif
        endif

        for (i=0; i<nx; i+=1)
            xVal = pnt2x(resTmp, i)

            // preserve whole row weakly as background band
            rawN = (rowTmp[i] - rowMinRaw) / (rowMaxRaw - rowMinRaw)
            rawN = max(0, min(1, rawN))
            baseV = bgLo + (bgHi-bgLo) * min(1, baseFrac * sqrt(rawN))

            c1 = 0
            c2 = 0
            c3 = 0

            if (numtype(p1) == 0 && m1 > 0)
                d1 = (xVal - p1) / wid1
                c1 = gain1 * exp(-0.5*d1*d1) * resTmp[i] / m1
            endif

            if (numtype(p2) == 0 && m2 > 0)
                d2 = (xVal - p2) / wid2
                c2 = gain2 * exp(-0.5*d2*d2) * resTmp[i] / m2
            endif

            if (numtype(p3) == 0 && m3 > 0)
                d3 = (xVal - p3) / wid3
                c3 = gain3 * exp(-0.5*d3*d3) * resTmp[i] / m3
            endif

            c1 = max(0, c1)
            c2 = max(0, c2)
            c3 = max(0, c3)

            cMax = max(c1, max(c2, c3))

            if (cMax < peakThresh)
                imgDisp[i][j] = baseV
            else
                if (c1 >= c2 && c1 >= c3)
                    alpha = min(1, c1)
                    imgDisp[i][j] = max(baseV, p1Lo + (p1Hi-p1Lo)*alpha)

                elseif (c2 >= c1 && c2 >= c3)
                    alpha = min(1, c2)
                    imgDisp[i][j] = max(baseV, p2Lo + (p2Hi-p2Lo)*alpha)

                else
                    alpha = min(1, c3)
                    imgDisp[i][j] = max(baseV, p3Lo + (p3Hi-p3Lo)*alpha)
                endif
            endif
        endfor
    endfor

    imgDisp = max(0, min(1, imgDisp[p][q]))

    SetScale/P x, DimOffset(imgIn,0), DimDelta(imgIn,0), WaveUnits(imgIn,0), imgDisp
    SetScale/P y, DimOffset(imgIn,1), DimDelta(imgIn,1), WaveUnits(imgIn,1), imgDisp
    SetScale d, 0, 0, WaveUnits(imgIn,-1), imgDisp

    return imgDisp
End


Function/WAVE a2k1d_make_row_norm_display_wave(imgIn, loFrac, hiFrac, gammaVal, bgSmoothN, doBgSub)
    Wave imgIn
    Variable loFrac, hiFrac, gammaVal, bgSmoothN, doBgSub

    a2k1d_ensure_folder()

    Variable nx = DimSize(imgIn, 0)
    Variable ny = DimSize(imgIn, 1)

    String outDF = "root:ARPES_LJZ:OUTPUT:A2K1D:"
    String dispPath = outDF + "a2k1d_img_disp_soft"
    String rowPath  = outDF + "a2k1d_row_soft"
    String bgPath   = outDF + "a2k1d_bg_soft"
    String statPath = outDF + "a2k1d_stat_soft"

    Make/O/D/N=(nx, ny) $dispPath
    Make/O/D/N=(nx) $rowPath, $bgPath, $statPath

    Wave imgDisp = $dispPath
    Wave rowTmp  = $rowPath
    Wave bgTmp   = $bgPath
    Wave statTmp = $statPath

    SetScale/P x, DimOffset(imgIn,0), DimDelta(imgIn,0), WaveUnits(imgIn,0), imgDisp
    SetScale/P y, DimOffset(imgIn,1), DimDelta(imgIn,1), WaveUnits(imgIn,1), imgDisp
    SetScale d, 0, 0, WaveUnits(imgIn,-1), imgDisp

    if (loFrac < 0)
        loFrac = 0
    endif
    if (hiFrac > 1)
        hiFrac = 1
    endif
    if (hiFrac <= loFrac)
        loFrac = 0.02
        hiFrac = 0.995
    endif
    if (gammaVal <= 0 || numtype(gammaVal) != 0)
        gammaVal = 1
    endif
    if (bgSmoothN < 1 || numtype(bgSmoothN) != 0)
        bgSmoothN = 1
    endif

    Variable i, j
    Variable vLo, vHi, val

    for (j = 0; j < ny; j += 1)
        rowTmp = imgIn[p][j]

        if (doBgSub)
            bgTmp = rowTmp[p]
            if (bgSmoothN > 1)
                Smooth bgSmoothN, bgTmp
            endif
            rowTmp = rowTmp[p] - bgTmp[p]
            rowTmp = max(rowTmp[p], 0)
        endif

        statTmp = rowTmp[p]
        Sort statTmp, statTmp

        vLo = statTmp[round(loFrac * (nx - 1))]
        vHi = statTmp[round(hiFrac * (nx - 1))]

        if (numtype(vLo) != 0 || numtype(vHi) != 0 || vHi <= vLo)
            WaveStats/Q rowTmp
            vLo = V_min
            vHi = V_max
        endif

        if (numtype(vLo) != 0 || numtype(vHi) != 0 || vHi <= vLo)
            for (i = 0; i < nx; i += 1)
                imgDisp[i][j] = 0
            endfor
            continue
        endif

        for (i = 0; i < nx; i += 1)
            val = (rowTmp[i] - vLo) / (vHi - vLo)
            if (val < 0)
                val = 0
            endif
            if (val > 1)
                val = 1
            endif

            val = val^gammaVal
            imgDisp[i][j] = val
        endfor
    endfor

    imgDisp = max(0, min(1, imgDisp[p][q]))

    return imgDisp
End

Function/WAVE a2k1d_make_personal_soft_heat_ct(nSamp)
    Variable nSamp

    a2k1d_ensure_folder()
    ctluz_ensure_folder()

    if (nSamp < 2)
        nSamp = 256
    endif

    SVAR/Z pickName = root:ARPES_LJZ:A2K1D:a2k1d_ctPickName
    NVAR/Z invCT    = root:ARPES_LJZ:A2K1D:a2k1d_ctInvert
    NVAR/Z whiteMix = root:ARPES_LJZ:A2K1D:a2k1d_hmCTWhiteMix

    String pick = "Mualani"
    if (SVAR_Exists(pickName) && strlen(pickName) > 0)
        pick = pickName
    endif

    Variable inv = 0
    if (NVAR_Exists(invCT))
        inv = invCT
    endif

    Variable wm = 0.25
    if (NVAR_Exists(whiteMix))
        wm = whiteMix
    endif
    if (wm < 0)
        wm = 0
    endif
    if (wm > 1)
        wm = 1
    endif

    String outPath = "root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_personal_soft_heat_ct"
    Make/O/W/U/N=(nSamp,3) $outPath
    Wave ct = $outPath

    Variable i, t, q
    Variable r, g, b
    Variable mix

    for (i = 0; i < nSamp; i += 1)
        t = i / (nSamp - 1.0)
        q = t^0.85

        a2k1d_ctluz_rgb16_at_t(pick, q, inv, r, g, b)

        mix = wm * (1 - t)^1.5
        r = r * (1 - mix) + 65535 * mix
        g = g * (1 - mix) + 65535 * mix
        b = b * (1 - mix) + 65535 * mix

        ct[i][0] = max(0, min(65535, r))
        ct[i][1] = max(0, min(65535, g))
        ct[i][2] = max(0, min(65535, b))
    endfor

    return ct
End

Function a2k1d_apply_personal_soft_heat_ct_to_image(winName, imgName)
    String winName, imgName

    Wave ctLocal = a2k1d_make_personal_soft_heat_ct(256)
    String ctPath = "root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_personal_soft_heat_ct"

    String imgInst = imgName
    String imgList = ImageNameList(winName, ";")
    if (WhichListItem(imgInst, imgList, ";") < 0)
        imgInst = StringFromList(0, imgList, ";")
    endif
    if (strlen(imgInst) == 0)
        return -1
    endif

    ModifyImage/W=$winName $imgInst, ctab={0,1,$ctPath,0}
    DoUpdate

    return 0
End

Function a2k1d_btn_plot_delta_err(ctrlName) : ButtonControl
    String ctrlName

    SVAR a2k1d_baseDF    = root:ARPES_LJZ:A2K1D:a2k1d_baseDF
    NVAR a2k1d_recursive = root:ARPES_LJZ:A2K1D:a2k1d_recursive
    NVAR a2k1d_hmUnitMode  = root:ARPES_LJZ:A2K1D:a2k1d_hmUnitMode
    SVAR a2k1d_baseName  = root:ARPES_LJZ:A2K1D:a2k1d_baseName
    a2k1d_sync_unified_from_legacy_if_missing()
    NVAR LatticeA = root:ARPES_LJZ:A2K1D:LatticeA
    NVAR useCorr = root:ARPES_LJZ:A2K1D:a2k1d_useAngleCorr

    String base = a2k1d_df_with_colon(a2k1d_baseDF)
    if (!a2k1d_df_exists(base))
        Abort "Plot delta: baseDF not found."
    endif

    if (useCorr)
        Print "A2K1D: using corrected k outputs where available."
    endif

    String wname
    if (strlen(a2k1d_baseName) > 0)
        wname = a2k1d_baseName + "_DeltaK12"
    else
        wname = "A2K1D_DeltaK12"
    endif
    DoWindow/K $wname

    String d12  = a2k1d_find_preferred_delta_wave(base, a2k1d_recursive, 0)
    String sd12 = a2k1d_find_preferred_delta_wave(base, a2k1d_recursive, 1)

    if (useCorr && a2k1d_path_is_corr_k_output(d12) && !a2k1d_path_is_corr_k_output(sd12))
        Print "Corrected DeltaK12 found but corrected SigmaDeltaK12 missing; plotting without corrected error bar."
        sd12 = ""
    endif

    if (strlen(d12) <= 0)
        Abort "Plot delta: no DeltaK12_k or DeltaK12_k_corr wave found."
    endif

    Wave/Z wD12 = $d12
    if (!WaveExists(wD12))
        Abort "Plot delta: wave reference failed."
    endif
    if (WaveDims(wD12) != 1)
        Abort "Plot delta: delta wave must be 1D."
    endif

    Variable hasSigma = 0
    if (strlen(sd12) > 0)
        Wave/Z wSD12 = $sd12
        if (WaveExists(wSD12))
            if (WaveDims(wSD12) != 1)
                Abort "Plot delta: sigma delta wave must be 1D."
            endif
            if (DimSize(wD12,0) != DimSize(wSD12,0))
                Abort "Plot delta: deltak12_k and sigmadeltak12_k size mismatch."
            endif
            hasSigma = 1
        endif
    endif
    if (!hasSigma)
        Print "Plot delta: SigmaDeltaK12 wave missing; plotting without error bars."
    endif

    String outDF = "root:ARPES_LJZ:OUTPUT:A2K1D:"
    String axisPath
    if (strlen(a2k1d_baseName) > 0)
        axisPath = outDF + a2k1d_baseName + "_AxisX"
    else
        axisPath = outDF + "A2K1D_AxisX"
    endif

    Wave wAxis = a2k1d_make_axis_wave(DimSize(wD12,0), axisPath)

    Display/N=$wname wD12 vs wAxis

    ModifyGraph/W=$wname mirror=2
    ModifyGraph/W=$wname mode($NameOfWave(wD12))=0
    ModifyGraph/W=$wname rgb($NameOfWave(wD12))=(0,0,0)

    if (hasSigma)
        ErrorBars/W=$wname/RGB=(0,0,0) $NameOfWave(wD12) Y, wave=(wSD12, wSD12)
    endif

    if (LatticeA == 0)
        Label/W=$wname left "Δk\\B12\\M (Å\\S-1\\M)"
    else
        Label/W=$wname left "Δk\\B12\\M (π/a)"
    endif

    Label/W=$wname bottom, a2k1d_heat_unit_label(a2k1d_hmUnitMode)

    // -------- y-axis: force lower bound to 0 --------
    Duplicate/O wD12, root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_tmp_deltaTop
    Wave tmpTop = root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_tmp_deltaTop
    if (hasSigma)
        tmpTop = wD12 + wSD12
    else
        tmpTop = wD12
    endif

    WaveStats/Q tmpTop
    Variable yHi = V_max
    if (numtype(yHi) != 0 || yHi <= 0)
        yHi = 1
    else
        yHi *= 1.08
    endif

    SetAxis/W=$wname left, 0, yHi
    SetAxis/A/W=$wname bottom
    ModifyGraph/W=$wname tickUnit(left)=1, tickUnit(bottom)=1

    KillWaves/Z tmpTop

    return 0
End

// legacy peak-guided visualization; not recommended as default paper figure because the base image contains fit-position prior.
Function/WAVE a2k1d_make_threepeak_ct(nSamp)
    Variable nSamp

    a2k1d_ensure_folder()
    if (nSamp < 2)
        nSamp = 256
    endif

    String outPath = "root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_threepeak_ct"
    Make/O/W/U/N=(nSamp,3) $outPath
    Wave ct = $outPath

    Variable i, t, u
    Variable r, g, b

    for (i=0; i<nSamp; i+=1)
        t = i/(nSamp-1.0)

        // ------------------------------------------------
        // 0.00 - 0.18 : 背景带（白 -> 浅灰蓝）
        // 0.22 - 0.46 : peak1 带（暖色：橙 -> 红）
        // 0.50 - 0.74 : peak2 带（冷色：青 -> 蓝）
        // 0.78 - 1.00 : peak3 带（紫色：淡紫 -> 洋红/紫）
        // 中间留一点过渡空隙，避免颜色串带
        // ------------------------------------------------
        if (t < 0.18)
            u = t/0.18
            r = a2k1d_lerp(65535, 57000, u)
            g = a2k1d_lerp(65535, 58500, u)
            b = a2k1d_lerp(65535, 62000, u)

        elseif (t < 0.22)
            // bg -> peak1 warm separator
            u = (t-0.18)/(0.22-0.18)
            r = a2k1d_lerp(57000, 65535, u)
            g = a2k1d_lerp(58500, 62000, u)
            b = a2k1d_lerp(62000, 56000, u)

        elseif (t < 0.46)
            // peak1: 浅暖白 -> 橙 -> 深红
            u = (t-0.22)/(0.46-0.22)
            r = a2k1d_lerp(65535, 52000, u)
            g = a2k1d_lerp(62000,  2000, u)
            b = a2k1d_lerp(56000,     0, u)

        elseif (t < 0.50)
            // peak1 -> peak2 cyan separator
            u = (t-0.46)/(0.50-0.46)
            r = a2k1d_lerp(52000, 56000, u)
            g = a2k1d_lerp( 2000, 63000, u)
            b = a2k1d_lerp(    0, 65535, u)

        elseif (t < 0.74)
            // peak2: 浅青白 -> 蓝
            u = (t-0.50)/(0.74-0.50)
            r = a2k1d_lerp(56000,     0, u)
            g = a2k1d_lerp(63000, 16000, u)
            b = a2k1d_lerp(65535, 52000, u)

        elseif (t < 0.78)
            // peak2 -> peak3 violet separator
            u = (t-0.74)/(0.78-0.74)
            r = a2k1d_lerp(    0, 62000, u)
            g = a2k1d_lerp(16000, 52000, u)
            b = a2k1d_lerp(52000, 65535, u)

        else
            // peak3: 浅紫 -> 洋红/深紫
            u = (t-0.78)/(1.00-0.78)
            r = a2k1d_lerp(62000, 36000, u)
            g = a2k1d_lerp(52000,     0, u)
            b = a2k1d_lerp(65535, 42000, u)
        endif

        r = max(0, min(65535, r))
        g = max(0, min(65535, g))
        b = max(0, min(65535, b))

        ct[i][0] = r
        ct[i][1] = g
        ct[i][2] = b
    endfor

    return ct
End

Function a2k1d_apply_threepeak_ct_to_image(winName, imgName)
    String winName, imgName

    Wave ctLocal = a2k1d_make_threepeak_ct(512)
    String ctPath = "root:ARPES_LJZ:OUTPUT:A2K1D:a2k1d_threepeak_ct"

    String imgInst = imgName
    String imgList = ImageNameList(winName, ";")
    if (WhichListItem(imgInst, imgList, ";") < 0)
        imgInst = StringFromList(0, imgList, ";")
    endif
    if (strlen(imgInst) == 0)
        return -1
    endif

    // 这里必须固定映射 0 -> 1
    // 不再做 percentile，否则 band identity 会被压坏
    ModifyImage/W=$winName $imgInst, ctab={0,1,$ctPath,0}
    DoUpdate

    return 0
End

Function a2k1d_axis_value_from_index(idx)
    Variable idx

    NVAR a2k1d_hmY0       = root:ARPES_LJZ:A2K1D:a2k1d_hmY0
    NVAR a2k1d_hmDY       = root:ARPES_LJZ:A2K1D:a2k1d_hmDY
    NVAR a2k1d_hmUnitMode = root:ARPES_LJZ:A2K1D:a2k1d_hmUnitMode
    NVAR a2k1d_hmYMul     = root:ARPES_LJZ:A2K1D:a2k1d_hmYMul

    Variable v = a2k1d_hmY0 + idx*a2k1d_hmDY
    if (a2k1d_hmUnitMode == 2)
        v *= a2k1d_hmYMul
    endif
    return v
End

Function a2k1d_axis_delta_value()
    NVAR a2k1d_hmDY       = root:ARPES_LJZ:A2K1D:a2k1d_hmDY
    NVAR a2k1d_hmUnitMode = root:ARPES_LJZ:A2K1D:a2k1d_hmUnitMode
    NVAR a2k1d_hmYMul     = root:ARPES_LJZ:A2K1D:a2k1d_hmYMul

    Variable dv = a2k1d_hmDY
    if (a2k1d_hmUnitMode == 2)
        dv *= a2k1d_hmYMul
    endif
    return dv
End

Function/WAVE a2k1d_make_axis_wave(nPts, outPath)
    Variable nPts
    String outPath

    Make/O/D/N=(nPts) $outPath
    Wave w = $outPath

    Variable i
    for (i=0; i<nPts; i+=1)
        w[i] = a2k1d_axis_value_from_index(i)
    endfor

    return w
End
